# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: IST FastDuck

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: FastDuck
interface: USB
address: COM7

[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: FastDuck v1

# Options of the instrumets

# General VISA settings for the instrument.

[VISA settings]
# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 2

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False

baud_rate: 115200
parity: Odd parity
term_char: None
#suppress_end_on_read: True
send_end_on_write: False


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
#######################################################################
### Signal Inputs #####################################################
#######################################################################

[Polarity 1-4]
label: Polarity 1-4
datatype: STRING
def_value: BIP
group: Dacs 1-4
set_cmd:
get_cmd:

[Polarity 5-8]
label: Polarity 5-8
datatype: STRING
def_value: BIP
group: Dacs 5-8
set_cmd:
get_cmd:

[Dac1]
label: Voltage applied to dac1
datatype: DOUBLE
unit: V
group: Dacs 1-4
def_value: 0
set_cmd:
get_cmd:
sweep_cmd: ***REPEAT SET***

[Dac2]
label: Voltage applied to dac2
datatype: DOUBLE
unit: V
group: Dacs 1-4
def_value: 0
set_cmd:
get_cmd:
sweep_cmd: ***REPEAT SET***

[Dac3]
label: Voltage applied to dac3
datatype: DOUBLE
unit: V
group: Dacs 1-4
def_value: 0
set_cmd:
get_cmd:
sweep_cmd: ***REPEAT SET***

[Dac4]
label: Voltage applied to dac4
datatype: DOUBLE
unit: V
group: Dacs 1-4
def_value: 0
set_cmd:
get_cmd:
sweep_cmd: ***REPEAT SET***

[Dac5]
label: Voltage applied to dac5
datatype: DOUBLE
unit: V
group: Dacs 5-8
def_value: 0
set_cmd:
get_cmd:
sweep_cmd: ***REPEAT SET***

[Dac6]
label: Voltage applied to dac6
datatype: DOUBLE
unit: V
group: Dacs 5-8
def_value: 0
set_cmd:
get_cmd:
sweep_cmd: ***REPEAT SET***

[Dac7]
label: Voltage applied to dac7
datatype: DOUBLE
unit: V
group: Dacs 5-8
def_value: 0
set_cmd:
get_cmd:
sweep_cmd: ***REPEAT SET***

[Dac8]
label: Voltage applied to dac8
datatype: DOUBLE
unit: V
group: Dacs 5-8
def_value: 0
set_cmd:
get_cmd:
sweep_cmd: ***REPEAT SET***