# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Zurich Instruments MFLI

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Zurich Instruments MFLI

startup: Do nothing

[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# List of models supported by this driver
model_str_1: MFLI
model_str_2: MFLI + MF-MD [Multi-Demodulator]
model_str_3: MFLI + MF-F5M [Frequency Extension]
model_str_4: MFLI + MF-MD + MF-F5M


# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False

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
##############################################################################
################################# Signal Inputs ##############################
##############################################################################

### VOLTAGE INPUT ###
[SigIn1VoltageAutorange]
label: Voltage Input Autorange
datatype: BUTTON
group: Voltage Input
section: Signal Input
get_cmd: /%s/sigins/0/autorange
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M

[SigIn1VoltageRange]
label: Voltage Input Range
datatype: DOUBLE
group: Voltage Input
section: Signal Input
get_cmd: /%s/sigins/0/range
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M

[SigIn1VoltageScaling]
label: Voltage Input Scaling
datatype: DOUBLE
group: Voltage Input
section: Signal Input
get_cmd: /%s/sigins/0/scaling
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M

[SigIn1VoltageAC]
label: Voltage Input AC
datatype: BOOLEAN
group: Voltage Input
section: Signal Input
get_cmd: /%s/sigins/0/ac
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M

[SigIn1VoltageImp]
label: Voltage Input 50 ohm
datatype: BOOLEAN
group: Voltage Input
section: Signal Input
get_cmd: /%s/sigins/0/imp50
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M

[SigIn1VoltageDiff]
label: Voltage Input Differential
datatype: BOOLEAN
group: Voltage Input
section: Signal Input
get_cmd: /%s/sigins/0/diff
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M

[SigIn1VoltageFloat]
label: Voltage Input Float
datatype: BOOLEAN
group: Voltage Input
section: Signal Input
get_cmd: /%s/sigins/0/float
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M

### CURRENT INPUT ###
[SigIn1CurrentAutorange]
label: Current Input Autorange
datatype: BUTTON
group: Current Input
section: Signal Input
get_cmd: /%s/currins/0/autorange
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M
[SigIn1CurrentRange]
label: Current Input Range
datatype: DOUBLE
group: Current Input
section: Signal Input
get_cmd: /%s/currins/0/range
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M

[SigIn1CurrentScaling]
label: Current Input Scaling
datatype: DOUBLE
group: Current Input
section: Signal Input
get_cmd: /%s/currins/0/scaling
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M

[SigIn1CurrentFloat]
label: Current Input Float
datatype: BOOLEAN
group: Current Input
section: Signal Input
get_cmd: /%s/currins/0/float
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M

##############################################################################
################################## Oscillators ###############################
##############################################################################
[Oscillator1Frequency]
label: Oscillator 1 Frequency
datatype: DOUBLE
unit: Hz
low_lim: 0
group: Oscillator 1
section: Oscillator
get_cmd: /%s/oscs/0/freq
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M


[Oscillator2Frequency]
label: Oscillator 2 Frequency
datatype: DOUBLE
unit: Hz
low_lim: 0
group: Oscillator 2
section: Oscillator
get_cmd: /%s/oscs/1/freq
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Oscillator3Frequency]
label: Oscillator 3 Frequency
datatype: DOUBLE
unit: Hz
low_lim: 0
group: Oscillator 3
section: Oscillator
get_cmd: /%s/oscs/2/freq
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Oscillator4Frequency]
label: Oscillator 4 Frequency
datatype: DOUBLE
unit: Hz
low_lim: 0
group: Oscillator 4
section: Oscillator
get_cmd: /%s/oscs/3/freq
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

##############################################################################
################################# Demodulators ###############################
##############################################################################

### Demodulator 1 ###
[Demod1Enable]
label: Enable
datatype: BOOLEAN
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/enable
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M


[Demod1Mode]
label: Mode
datatype: COMBO
combo_def_1: Manual
combo_def_2: ExtRef
combo_def_3: ExtRef Low BW
combo_def_4: ExtRef High BW
cmd_def_1: 0
cmd_def_2: 4
cmd_def_3: 2
cmd_def_4: 3
permission: READ
group: Demodulator 1
section: Demodulator
get_cmd: /%s/extrefs/0/%s
state_quant: Demod1Enable
state_value_1: 1
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M


[Demod1Osc]
label: Oscillator
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/oscselect
state_quant: Demod1Enable
state_value_1: 1
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M


[Demod1Harm]
label: Harmonic
datatype: DOUBLE
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/harmonic
state_quant: Demod1Enable
state_value_1: 1
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M


[Demod1Freq]
label: Frequency
datatype: DOUBLE
permission: READ
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/freq
state_quant: Demod1Enable
state_value_1: 1
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M


[Demod1PhaseAdjust]
label: Phase adjust
datatype: BUTTON
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/phaseadjust
state_quant: Demod1Enable
state_value_1: 1
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M


[Demod1Phase]
label: Phase (deg)
datatype: DOUBLE
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/phaseshift
state_quant: Demod1Enable
state_value_1: 1
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M


[Demod1Signal]
label: Signal
datatype: COMBO
combo_def_1: Sig In 1
combo_def_2: Curr In 1
combo_def_3: Trigger 1
combo_def_4: Trigger 2
combo_def_5: Aux Out 1
combo_def_6: Aux Out 2
combo_def_7: Aux Out 3
combo_def_8: Aux Out 4
combo_def_9: Aux In 1
combo_def_10: Aux In 2
combo_def_11: Constant
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
cmd_def_11: 174
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/adcselect
state_quant: Demod1Enable
state_value_1: 1
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M


[Demod1Order]
label: Order
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
cmd_def_6: 6
cmd_def_7: 7
cmd_def_8: 8
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/order
state_quant: Demod1Enable
state_value_1: 1
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M


[Demod1BWUnit]
label: Unit
datatype: COMBO
combo_def_1: TC
combo_def_2: BW NEP
combo_def_3: BW 3 dB
group: Demodulator 1
section: Demodulator
state_quant: Demod1Enable
state_value_1: 1
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M


[Demod1TC]
label: Time constant
datatype: DOUBLE
state_quant: Demod1BWUnit
state_value_1: TC
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/timeconstant
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M

[Demod1BwNep]
label: BW NEP
datatype: DOUBLE
state_quant: Demod1BWUnit
state_value_1: BW NEP
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/timeconstant
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M

[Demod1Bw3db]
label: BW 3 db
datatype: DOUBLE
state_quant: Demod1BWUnit
state_value_1: BW 3 dB
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/timeconstant
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M


[Demod1SincFilter]
label: Sinc
datatype: BOOLEAN
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/sinc
state_quant: Demod1Enable
state_value_1: 1
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M


[Demod1Rate]
label: Rate (Sa/s)
datatype: DOUBLE
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/rate
state_quant: Demod1Enable
state_value_1: 1
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M


### Demodulator 2 ###
[Demod2Enable]
label: Enable
datatype: BOOLEAN
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/enable
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod2Mode]
label: Mode
datatype: COMBO
combo_def_1: Manual
combo_def_2: ExtRef
combo_def_3: ExtRef Low BW
combo_def_4: ExtRef High BW
cmd_def_1: 0
cmd_def_2: 4
cmd_def_3: 2
cmd_def_4: 3
group: Demodulator 2
section: Demodulator
get_cmd: /%s/extrefs/0/%s
state_quant: Demod2Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod2Osc]
label: Oscillator
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/oscselect
state_quant: Demod2Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod2Harm]
label: Harmonic
datatype: DOUBLE
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/harmonic
state_quant: Demod2Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod2Freq]
label: Frequency
datatype: DOUBLE
permission: READ
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/freq
state_quant: Demod2Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod2PhaseAdjust]
label: Phase adjust
datatype: BUTTON
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/phaseadjust
state_quant: Demod2Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod2Phase]
label: Phase (deg)
datatype: DOUBLE
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/phaseshift
state_quant: Demod2Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod2Signal]
label: Signal
datatype: COMBO
combo_def_1: Sig In 1
combo_def_2: Curr In 1
combo_def_3: Trigger 1
combo_def_4: Trigger 2
combo_def_5: Aux Out 1
combo_def_6: Aux Out 2
combo_def_7: Aux Out 3
combo_def_8: Aux Out 4
combo_def_9: Aux In 1
combo_def_10: Aux In 2
combo_def_11: Constant
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
cmd_def_11: 174
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/adcselect
state_quant: Demod2Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod2Order]
label: Order
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
cmd_def_6: 6
cmd_def_7: 7
cmd_def_8: 8
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/order
state_quant: Demod2Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod2BWUnit]
label: Unit
datatype: COMBO
combo_def_1: TC
combo_def_2: BW NEP
combo_def_3: BW 3 dB
group: Demodulator 2
section: Demodulator
state_quant: Demod2Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod2TC]
label: Time constant
datatype: DOUBLE
state_quant: Demod2BWUnit
state_value_1: TC
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/timeconstant
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod2BwNep]
label: BW NEP
datatype: DOUBLE
state_quant: Demod2BWUnit
state_value_1: BW NEP
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/timeconstant
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod2Bw3db]
label: BW 3 db
datatype: DOUBLE
state_quant: Demod2BWUnit
state_value_1: BW 3 dB
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/timeconstant
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod2SincFilter]
label: Sinc
datatype: BOOLEAN
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/sinc
state_quant: Demod2Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod2Rate]
label: Rate (Sa/s)
datatype: DOUBLE
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/rate
state_quant: Demod2Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

### Demodulator 3 ###
[Demod3Enable]
label: Enable
datatype: BOOLEAN
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/enable
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod3Mode]
label: Mode
datatype: COMBO
combo_def_1: Manual
combo_def_2: ExtRef
combo_def_3: ExtRef Low BW
combo_def_4: ExtRef High BW
cmd_def_1: 0
cmd_def_2: 4
cmd_def_3: 2
cmd_def_4: 3
permission: READ
group: Demodulator 3
section: Demodulator
get_cmd: /%s/extrefs/1/%s
state_quant: Demod3Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod3Osc]
label: Oscillator
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/oscselect
state_quant: Demod3Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod3Harm]
label: Harmonic
datatype: DOUBLE
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/harmonic
state_quant: Demod3Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod3Freq]
label: Frequency
datatype: DOUBLE
permission: READ
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/freq
state_quant: Demod3Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod3PhaseAdjust]
label: Phase adjust
datatype: BUTTON
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/phaseadjust
state_quant: Demod3Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod3Phase]
label: Phase (deg)
datatype: DOUBLE
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/phaseshift
state_quant: Demod3Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod3Signal]
label: Signal
datatype: COMBO
combo_def_1: Sig In 1
combo_def_2: Curr In 1
combo_def_3: Trigger 1
combo_def_4: Trigger 2
combo_def_5: Aux Out 1
combo_def_6: Aux Out 2
combo_def_7: Aux Out 3
combo_def_8: Aux Out 4
combo_def_9: Aux In 1
combo_def_10: Aux In 2
combo_def_11: Constant
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
cmd_def_11: 174
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/adcselect
state_quant: Demod3Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod3Order]
label: Order
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
cmd_def_6: 6
cmd_def_7: 7
cmd_def_8: 8
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/order
state_quant: Demod3Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod3BWUnit]
label: Unit
datatype: COMBO
combo_def_1: TC
combo_def_2: BW NEP
combo_def_3: BW 3 dB
group: Demodulator 3
section: Demodulator
state_quant: Demod3Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod3TC]
label: Time constant
datatype: DOUBLE
state_quant: Demod3BWUnit
state_value_1: TC
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/timeconstant
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod3BwNep]
label: BW NEP
datatype: DOUBLE
state_quant: Demod3BWUnit
state_value_1: BW NEP
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/timeconstant
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod3Bw3db]
label: BW 3 db
datatype: DOUBLE
state_quant: Demod3BWUnit
state_value_1: BW 3 dB
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/timeconstant
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod3SincFilter]
label: Sinc
datatype: BOOLEAN
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/sinc
state_quant: Demod3Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod3Rate]
label: Rate (Sa/s)
datatype: DOUBLE
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/rate
state_quant: Demod3Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

### Demodulator 4 ###
[Demod4Enable]
label: Enable
datatype: BOOLEAN
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/enable
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod4Mode]
label: Mode
datatype: COMBO
combo_def_1: Manual
combo_def_2: ExtRef
combo_def_3: ExtRef Low BW
combo_def_4: ExtRef High BW
cmd_def_1: 0
cmd_def_2: 4
cmd_def_3: 2
cmd_def_4: 3
group: Demodulator 4
section: Demodulator
get_cmd: /%s/extrefs/1/%s
state_quant: Demod4Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod4Osc]
label: Oscillator
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/oscselect
state_quant: Demod4Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod4Harm]
label: Harmonic
datatype: DOUBLE
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/harmonic
state_quant: Demod4Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod4Freq]
label: Frequency
datatype: DOUBLE
permission: READ
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/freq
state_quant: Demod4Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod4PhaseAdjust]
label: Phase adjust
datatype: BUTTON
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/phaseadjust
state_quant: Demod4Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod4Phase]
label: Phase (deg)
datatype: DOUBLE
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/phaseshift
state_quant: Demod4Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod4Signal]
label: Signal
datatype: COMBO
combo_def_1: Sig In 1
combo_def_2: Curr In 1
combo_def_3: Trigger 1
combo_def_4: Trigger 2
combo_def_5: Aux Out 1
combo_def_6: Aux Out 2
combo_def_7: Aux Out 3
combo_def_8: Aux Out 4
combo_def_9: Aux In 1
combo_def_10: Aux In 2
combo_def_11: Constant
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
cmd_def_11: 174
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/adcselect
state_quant: Demod4Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod4Order]
label: Order
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
cmd_def_6: 6
cmd_def_7: 7
cmd_def_8: 8
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/order
state_quant: Demod4Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod4BWUnit]
label: Unit
datatype: COMBO
combo_def_1: TC
combo_def_2: BW NEP
combo_def_3: BW 3 dB
group: Demodulator 4
section: Demodulator
state_quant: Demod4Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod4TC]
label: Time constant
datatype: DOUBLE
state_quant: Demod4BWUnit
state_value_1: TC
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/timeconstant
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod4BwNep]
label: BW NEP
datatype: DOUBLE
state_quant: Demod4BWUnit
state_value_1: BW NEP
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/timeconstant
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod4Bw3db]
label: BW 3 db
datatype: DOUBLE
state_quant: Demod4BWUnit
state_value_1: BW 3 dB
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/timeconstant
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod4SincFilter]
label: Sinc
datatype: BOOLEAN
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/sinc
state_quant: Demod4Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod4Rate]
label: Rate (Sa/s)
datatype: DOUBLE
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/rate
state_quant: Demod4Enable
state_value_1: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

##############################################################################
############################### Output Amplitudes ############################
##############################################################################

### Amplitude 1 ###
[OutAmp1Enable]
label: Enable
datatype: BOOLEAN
group: Output Amplitude 1
section: Output Amplitude
get_cmd: /%s/sigouts/0/enables/0
model_value_1: model_str_4: MFLI + MF-MD + MF-F5M

[OutAmp1Mode]
label: Mode
datatype: STRING
group: Output Amplitude 1
section: Output Amplitude
permission: READ
state_quant: OutAmp1Enable
state_value_1: 1
model_value_1: model_str_4: MFLI + MF-MD + MF-F5M

[OutAmp1Unit]
label: Unit
datatype: COMBO
combo_def_1: Vpk
combo_def_2: Vrms
group: Output Amplitude 1
section: Output Amplitude
state_quant: OutAmp1Enable
state_value_1: 1
model_value_1: model_str_4: MFLI + MF-MD + MF-F5M

[OutAmp1VpkValue]
label: Amplitude 1 (Vpk)
datatype: DOUBLE
group: Output Amplitude 1
section: Output Amplitude
get_cmd: /%s/sigouts/0/amplitudes/0
state_quant: OutAmp1Unit
state_value_1: Vpk
model_value_1: model_str_4: MFLI + MF-MD + MF-F5M

[OutAmp1VrmsValue]
label: Amplitude 1 (Vrms)
datatype: DOUBLE
group: Output Amplitude 1
section: Output Amplitude
get_cmd: /%s/sigouts/0/amplitudes/0
state_quant: OutAmp1Unit
state_value_1: Vrms
model_value_1: model_str_4: MFLI + MF-MD + MF-F5M

### Amplitude 2 ###
[OutAmp2Enable]
label: Enable
datatype: BOOLEAN
group: Output Amplitude 2
section: Output Amplitude
get_cmd: /%s/sigouts/0/enables/1
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M


[OutAmp2Mode]
label: Mode
datatype: STRING
group: Output Amplitude 2
section: Output Amplitude
permission: READ
state_quant: OutAmp2Enable
state_value_1: 1
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M


[OutAmp2Unit]
label: Unit
datatype: COMBO
combo_def_1: Vpk
combo_def_2: Vrms
group: Output Amplitude 2
section: Output Amplitude
state_quant: OutAmp2Enable
state_value_1: 1
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M

[OutAmp2VpkValue]
label: Amplitude 2 (Vpk)
datatype: DOUBLE
group: Output Amplitude 2
section: Output Amplitude
get_cmd: /%s/sigouts/0/amplitudes/1
state_quant: OutAmp2Unit
state_value_1: Vpk
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M

[OutAmp2VrmsValue]
label: Amplitude 2 (Vrms)
datatype: DOUBLE
group: Output Amplitude 2
section: Output Amplitude
get_cmd: /%s/sigouts/0/amplitudes/1
state_quant: OutAmp2Unit
state_value_1: Vrms
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-F5M [Frequency Extension]
model_value_4: MFLI + MF-MD + MF-F5M

### Amplitude 3 ###
[OutAmp3Enable]
label: Enable
datatype: BOOLEAN
group: Output Amplitude 3
section: Output Amplitude
get_cmd: /%s/sigouts/0/enables/2
model_value_1: MFLI + MF-MD + MF-F5M

[OutAmp3Mode]
label: Mode
datatype: STRING
group: Output Amplitude 3
section: Output Amplitude
permission: READ
state_quant: OutAmp3Enable
state_value_1: 1
model_value_1: MFLI + MF-MD + MF-F5M

[OutAmp3Unit]
label: Unit
datatype: COMBO
combo_def_1: Vpk
combo_def_2: Vrms
group: Output Amplitude 3
section: Output Amplitude
state_quant: OutAmp3Enable
state_value_1: 1
model_value_1: MFLI + MF-MD + MF-F5M

[OutAmp3VpkValue]
label: Amplitude 1 (Vpk)
datatype: DOUBLE
group: Output Amplitude 3
section: Output Amplitude
get_cmd: /%s/sigouts/0/amplitudes/2
state_quant: OutAmp3Unit
state_value_1: Vpk
model_value_1: MFLI + MF-MD + MF-F5M

[OutAmp3VrmsValue]
label: Amplitude 1 (Vrms)
datatype: DOUBLE
group: Output Amplitude 3
section: Output Amplitude
get_cmd: /%s/sigouts/0/amplitudes/2
state_quant: OutAmp3Unit
state_value_1: Vrms
model_value_1: MFLI + MF-MD + MF-F5M

### Amplitude 4 ###
[OutAmp4Enable]
label: Enable
datatype: BOOLEAN
group: Output Amplitude 4
section: Output Amplitude
get_cmd: /%s/sigouts/0/enables/3
model_value_1: MFLI + MF-MD + MF-F5M

[OutAmp4Mode]
label: Mode
datatype: STRING
group: Output Amplitude 4
section: Output Amplitude
permission: READ
state_quant: OutAmp4Enable
state_value_1: 1
model_value_1: MFLI + MF-MD + MF-F5M

[OutAmp4Unit]
label: Unit
datatype: COMBO
combo_def_1: Vpk
combo_def_2: Vrms
group: Output Amplitude 4
section: Output Amplitude
state_quant: OutAmp4Enable
state_value_1: 1
model_value_1: MFLI + MF-MD + MF-F5M

[OutAmp4VpkValue]
label: Amplitude 1 (Vpk)
datatype: DOUBLE
group: Output Amplitude 4
section: Output Amplitude
get_cmd: /%s/sigouts/0/amplitudes/3
state_quant: OutAmp4Unit
state_value_1: Vpk
model_value_1: MFLI + MF-MD + MF-F5M

[OutAmp4VrmsValue]
label: Amplitude 1 (Vrms)
datatype: DOUBLE
group: Output Amplitude 4
section: Output Amplitude
get_cmd: /%s/sigouts/0/amplitudes/3
state_quant: OutAmp4Unit
state_value_1: Vrms
model_value_1: MFLI + MF-MD + MF-F5M

##############################################################################
################################ Signal Outputs ##############################
##############################################################################

[SigOut1Enable]
label: Enable
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/on

[SigOut1Imp50]
label: 50 Ohm
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/imp50

[SigOut1Range]
label: Range
datatype: COMBO
combo_def_1: 10mV
combo_def_2: 100mV
combo_def_3: 1V
combo_def_4: 10v
cmd_def_1: 0.01
cmd_def_2: 0.1
cmd_def_3: 1
cmd_def_4: 10
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/range

[SigOut1Autorange]
label: Autorange
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/autorange

[SigOut1Offset]
label: Offset
datatype: DOUBLE
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/offset

[SigOut1Add]
label: Add
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/add

[SigOut1Diff]
label: Diff
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/diff

##############################################################################
############################## Data acquisition ##############################
##############################################################################
[DAQMethod]
label: Data acquisition method
datatype: COMBO
combo_def_1: getSample()
combo_def_2: poll()
section: Data acquisition
get_cmd:

[PollRecordingTime]
label: Recording time
datatype: DOUBLE
def_value: 0.2
unit: s
section: Data acquisition
state_quant: DAQMethod
state_value_1: poll()

[PollTimeout]
label: Timeout
datatype: DOUBLE
def_value: 2
unit: s
section: Data acquisition
state_quant: DAQMethod
state_value_1: poll()

##############################################################################
############################ Demodulator read-outs ###########################
##############################################################################

### Demod 1 ###
[Demod1SamplingRate]
label: Rate
datatype: DOUBLE
group: Demodulator 1
section: Data acquisition
get_cmd: /%s/demods/0/rate
state_quant: DAQMethod
state_value_1: poll()
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-MD + MF-F5M

[Demod1X]
label: Demod 1 X
datatype: DOUBLE
group: Demodulator 1
section: Data acquisition
get_cmd: /%s/demods/0/sample
state_quant: Demod1Enable
state_value_1: 1
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-MD + MF-F5M

[Demod1Y]
label: Demod 1 Y
datatype: DOUBLE
group: Demodulator 1
section: Data acquisition
get_cmd: /%s/demods/0/sample
state_quant: Demod1Enable
state_value_1: 1
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-MD + MF-F5M

[Demod1R]
label: Demod 1 R
datatype: DOUBLE
group: Demodulator 1
section: Data acquisition
get_cmd: /%s/demods/0/sample
state_quant: Demod1Enable
state_value_1: 1
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-MD + MF-F5M

[Demod1phi]
label: Demod 1 phi
datatype: DOUBLE
group: Demodulator 1
section: Data acquisition
get_cmd: /%s/demods/0/sample
state_quant: Demod1Enable
state_value_1: 1
model_value_1: MFLI
model_value_2: MFLI + MF-MD [Multi-Demodulator]
model_value_3: MFLI + MF-MD + MF-F5M

### Demod 2 ###
[Demod2SamplingRate]
label: Rate
datatype: DOUBLE
group: Demodulator 2
section: Data acquisition
get_cmd: /%s/demods/1/rate
state_quant: DAQMethod
state_value: poll()
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod2X]
label: Demod 2 X
datatype: DOUBLE
group: Demodulator 2
section: Data acquisition
get_cmd: /%s/demods/1/sample
state_quant: Demod2Enable
state_value: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod2Y]
label: Demod 2 Y
datatype: DOUBLE
group: Demodulator 2
section: Data acquisition
get_cmd: /%s/demods/1/sample
state_quant: Demod2Enable
state_value: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod2R]
label: Demod 2 R
datatype: DOUBLE
group: Demodulator 2
section: Data acquisition
get_cmd: /%s/demods/1/sample
state_quant: Demod2Enable
state_value: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod2phi]
label: Demod 2 phi
datatype: DOUBLE
group: Demodulator 2
section: Data acquisition
get_cmd: /%s/demods/1/sample
state_quant: Demod2Enable
state_value: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

### Demod 3 ###
[Demod3SamplingRate]
label: Rate
datatype: DOUBLE
group: Demodulator 3
section: Data acquisition
get_cmd: /%s/demods/2/rate
state_quant: DAQMethod
state_value: poll()
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod3X]
label: Demod 3 X
datatype: DOUBLE
group: Demodulator 3
section: Data acquisition
get_cmd: /%s/demods/2/sample
state_quant: Demod3Enable
state_value: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod3Y]
label: Demod 3 Y
datatype: DOUBLE
group: Demodulator 3
section: Data acquisition
get_cmd: /%s/demods/2/sample
state_quant: Demod3Enable
state_value: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod3R]
label: Demod 3 R
datatype: DOUBLE
group: Demodulator 3
section: Data acquisition
get_cmd: /%s/demods/2/sample
state_quant: Demod3Enable
state_value: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod3phi]
label: Demod 3 phi
datatype: DOUBLE
group: Demodulator 3
section: Data acquisition
get_cmd: /%s/demods/2/sample
state_quant: Demod3Enable
state_value: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

### Demod 4 ###
[Demod4SamplingRate]
label: Rate
datatype: DOUBLE
group: Demodulator 4
section: Data acquisition
get_cmd: /%s/demods/3/rate
state_quant: DAQMethod
state_value: poll()
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod4X]
label: Demod 4 X
datatype: DOUBLE
group: Demodulator 4
section: Data acquisition
get_cmd: /%s/demods/3/sample
state_quant: Demod4Enable
state_value: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod4Y]
label: Demod 4 Y
datatype: DOUBLE
group: Demodulator 4
section: Data acquisition
get_cmd: /%s/demods/3/sample
state_quant: Demod4Enable
state_value: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod4R]
label: Demod 4 R
datatype: DOUBLE
group: Demodulator 4
section: Data acquisition
get_cmd: /%s/demods/3/sample
state_quant: Demod4Enable
state_value: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

[Demod4phi]
label: Demod 4 phi
datatype: DOUBLE
group: Demodulator 4
section: Data acquisition
get_cmd: /%s/demods/3/sample
state_quant: Demod4Enable
state_value: 1
model_value_1: MFLI + MF-MD [Multi-Demodulator]
model_value_2: MFLI + MF-MD + MF-F5M

##############################################################################
################################ Scope Module ################################
##############################################################################

################### Scope Module Control Options ###################

### Horizontal ###
[ScopeModuleControlMode]
label: Mode
datatype: COMBO
combo_def_1: Time domain
combo_def_2: Freq domain FFT
cmd_def_1: 1
cmd_def_2: 3
section: Scope Module
group: Control
get_cmd: scopeModule/mode

[ScopeModuleControlSamplingRate]
label: Sampling rate
datatype: COMBO
combo_def_1: 60 MHz
combo_def_2: 30 MHz
combo_def_3: 15 MHz
combo_def_4: 7.5 MHz
combo_def_5: 3.75 MHz
combo_def_6: 1.88 MHz
combo_def_7: 938 KHz
combo_def_8: 469 KHz
combo_def_9: 234 KHz
combo_def_10: 117 KHz
combo_def_11: 58.6 KHz
combo_def_12: 29.3 KHz
combo_def_13: 14.6 KHz
combo_def_14: 7.32 KHz
combo_def_15: 3.66 KHz
combo_def_16: 1.88 KHz
combo_def_17: 916 Hz
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
cmd_def_11: 10
cmd_def_12: 11
cmd_def_13: 12
cmd_def_14: 13
cmd_def_15: 14
cmd_def_16: 15
cmd_def_17: 16
section: Scope Module
group: Control
get_cmd: /%s/scopes/0/time

[ScopeControlModuleLengthUnit]
label: Unit
datatype: COMBO
combo_def_1: Points
combo_def_2: Duration
section: Scope Module
group: Control

[ScopeModuleControlLengthPoints]
label: Points
datatype: DOUBLE
section: Scope Module
group: Control
state_quant: ScopeControlModuleLengthUnit
state_value_1: Points
get_cmd: /%s/scopes/0/length

[ScopeModuleControlLengthDuration]
label: Duration
datatype: DOUBLE
section: Scope Module
group: Control
state_quant: ScopeControlModuleLengthUnit
state_value_1: Duration
get_cmd: /%s/scopes/0/length

### Vertical ###
[ScopeModuleControlChannelMode]
label: Channel Mode
datatype: COMBO
combo_def_1: Channel 1
combo_def_2: Channel 2
combo_def_3: Both
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
section: Scope Module
group: Control
get_cmd: /%s/scopes/0/channel

[ScopeModuleControlChannel1Input]
label: Channel 1 input
datatype: COMBO
section: Scope Module
group: Control
combo_def_1: Aux In 1 Channel 1
combo_def_2: Aux In 1 Channel 2
combo_def_3: Current Input 1
combo_def_4: Osc phi Demod 2
combo_def_5: Osc phi Denod 4
combo_def_6: Signal Input 1
combo_def_7: Signal Output 1
combo_def_8: Trigger Input 1
combo_def_9: Trigger Input 2
combo_def_10: Trigger Output 1
combo_def_11: Trigger Output 2
cmd_def_1: 8
cmd_def_2: 9
cmd_def_3: 1
cmd_def_4: 10
cmd_def_5: 11
cmd_def_6: 0
cmd_def_7: 12
cmd_def_8: 2
cmd_def_9: 3
cmd_def_10: 14
cmd_def_11: 15
get_cmd: /%s/scopes/0/channels/0/inputselect

[ScopeModuleControlChannel1Min]
label: Min
datatype: DOUBLE
section: Scope Module
group: Control
get_cmd: /%s/scopes/0/channels/0/limitlower

[ScopeModuleControlChannel1Max]
label: Max
datatype: DOUBLE
section: Scope Module
group: Control
get_cmd: /%s/scopes/0/channels/0/limitupper

[ScopeModuleControlChannel2Input]
label: Channel 2 input
datatype: COMBO
section: Scope Module
group: Control
combo_def_1: Aux In 1 Channel 1
combo_def_2: Aux In 1 Channel 2
combo_def_3: Current Input 1
combo_def_4: Osc phi Demod 2
combo_def_5: Osc phi Denod 4
combo_def_6: Signal Input 1
combo_def_7: Signal Output 1
combo_def_8: Trigger Input 1
combo_def_9: Trigger Input 2
combo_def_10: Trigger Output 1
combo_def_11: Trigger Output 2
cmd_def_1: 8
cmd_def_2: 9
cmd_def_3: 1
cmd_def_4: 10
cmd_def_5: 11
cmd_def_6: 0
cmd_def_7: 12
cmd_def_8: 2
cmd_def_9: 3
cmd_def_10: 14
cmd_def_11: 15
get_cmd: /%s/scopes/0/channels/1/inputselect
option_value_1: DIG

[ScopeModuleControlChannel2Min]
label: Min
datatype: DOUBLE
section: Scope Module
group: Control
get_cmd: /%s/scopes/0/channels/1/limitlower
option_value_1: DIG

[ScopeModuleControlChannel2Max]
label: Max
datatype: DOUBLE
section: Scope Module
group: Control
get_cmd: /%s/scopes/0/channels/1/limitupper
option_value_1: DIG

[ScopeModuleControlAvgFilter]
label: Avg Filter
datatype: COMBO
combo_def_1: None
combo_def_2: Exp Moving Avg
cmd_def_1: 1
cmd_def_2: 2
group: Control
section: Scope Module

[ScopeModuleControlAvgValue]
label: Averages
datatype: DOUBLE
section: Scope Module
group: Control
get_cmd: scopeModule/averager/weight
state_quant: ScopeModuleControlAvgFilter
state_value: Exp Moving Avg

################### Scope Module Trig Options ###################

### Trig ###
[ScopeModuleTrigEnable]
label: Enable
datatype: BOOLEAN
section: Scope Module
group: Trig
get_cmd: /%s/scopes/0/trigenable

[ScopeModuleTrigSignal]
label: Signal
datatype: COMBO
section: Scope Module
group: Trig
combo_def_1: Aux In 1 Channel 1
combo_def_2: Aux In 1 Channel 2
combo_def_3: Current Input 1
combo_def_4: Osc phi Demod 2
combo_def_5: Osc phi Denod 4
combo_def_6: Signal Input 1
combo_def_7: Signal Output 1
combo_def_8: Trigger Input 1
combo_def_9: Trigger Input 2
combo_def_10: Trigger Output 1
combo_def_11: Trigger Output 2
cmd_def_1: 8
cmd_def_2: 9
cmd_def_3: 1
cmd_def_4: 10
cmd_def_5: 11
cmd_def_6: 0
cmd_def_7: 12
cmd_def_8: 2
cmd_def_9: 3
cmd_def_10: 14
cmd_def_11: 15
get_cmd: /%s/scopes/0/trigchannel

[ScopeModuleTrigSlope]
label: Slope
datatype: COMBO
combo_def_1: None
combo_def_2: Rise
combo_def_3: Fall
combo_def_4: Both
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
section: Scope Module
group: Trig
get_cmd: /%s/scopes/0/trigslope

[ScopeModuleTrigLevel]
label: Level (V)
datatype: DOUBLE
section: Scope Module
group: Trig
get_cmd: /%s/scopes/0/triglevel

[ScopeModuleTrigHysteresisUnit]
label: Hysteresis unit
datatype: COMBO
combo_def_1: Voltage
combo_def_2: Percentage
cmd_def_1: 0
cmd_def_2: 1
section: Scope Module
group: Trig
get_cmd: /%s/scopes/0/trighysteresis/mode

[ScopeModuleTrigHysteresisVoltage]
label: Hysteresis (V)
datatype: DOUBLE
section: Scope Module
group: Trig
state_quant: ScopeModuleTrigHysteresisUnit
state_value_1: Voltage
get_cmd: /%s/scopes/0/trighysteresis/absolute

[ScopeModuleTrigHysteresisPercentage]
label: Hysteresis (%)
datatype: DOUBLE
section: Scope Module
group: Trig
state_quant: ScopeModuleTrigHysteresisUnit
state_value_1: Percentage
get_cmd: /%s/scopes/0/trighysteresis/relative

[ScopeModuleTrigTriggerGatingEnable]
label: Trigger Gating
datatype: BOOLEAN
section: Scope Module
group: Trig
get_cmd: /%s/scopes/0/triggate/enable
option_value_1: DIG

[ScopeModuleTrigTriggerGating]
label: Trigger Gating
datatype: COMBO
section: Scope Module
group: Trig
combo_def_1: Trigger In 3 High
combo_def_2: Trigger In 3 Low
combo_def_3: Trigger In 4 High
combo_def_4: Trigger In 4 Low
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
get_cmd: /%s/scopes/0/triggate/inputselect
option_value_1: DIG

[ScopeModuleTrigHoldoffUnit]
label: Holdoff unit
datatype: COMBO
combo_def_1: Time
combo_def_2: Events
cmd_def_1: 0
cmd_def_2: 1
section: Scope Module
group: Trig
get_cmd: /%s/scopes/0/trigholdoffmode

[ScopeModuleTrigHoldoffTime]
label: Holdoff (s)
datatype: DOUBLE
section: Scope Module
group: Trig
state_quant: ScopeModuleTrigHoldoffUnit
state_value_1: Time
get_cmd: /%s/scopes/0/trigholdoff

[ScopeModuleTrigHoldoffEvents]
label: Holdoff (events)
datatype: DOUBLE
section: Scope Module
group: Trig
state_quant: ScopeModuleTrigHoldoffUnit
state_value_1: Events
get_cmd: /%s/scopes/0/trigholdoffcount

[ScopeModuleTrigReference]
label: Reference (%)
datatype: DOUBLE
section: Scope Module
group: Trig
get_cmd: /%s/scopes/0/trigreference

[ScopeModuleTrigDelay]
label: Delay (s)
datatype: DOUBLE
section: Scope Module
group: Trig
get_cmd: /%s/scopes/0/trigdelay

### Segments ###
[ScopeModuleSegmentsEnable]
label: Enable
datatype: BOOLEAN
section: Scope Module
group: Trig
get_cmd: /%s/scopes/0/segments/enable
option_value_1: DIG

[ScopeModuleSegmentsSegments]
label: Segments
datatype: DOUBLE
section: Scope Module
group: Trig
state_quant: ScopeModuleSegmentsEnable
state_value_1: TRUE
get_cmd: /%s/scopes/0/segments/count
option_value_1: DIG

[ScopeModuleSegmentsShownTrigger]
label: Shown trigger
datatype: DOUBLE
permission: READ
section: Scope Module
group: Trig

[ScopeModuleSegmentsPlotType]
label: Plot type
datatype: COMBO
combo_def_1: 2D
combo_def_2: Row
combo_def_3: 2D + Row
section: Scope Module
group: Trig

[ScopeModuleSegmentsPaletteEnable]
label: Palette Enable
datatype: BOOLEAN
section: Scope Module
group: Trig

[ScopeModuleSegmentsPalette]
label: Palette
datatype: COMBO
combo_def_1: Default
combo_def_2: Hot
combo_def_3: Cool
combo_def_4: Jet
combo_def_5: Grey
combo_def_6: Copper
section: Scope Module
group: Trig

[ScopeModuleSegmentsActiveRow]
label: Active row
datatype: DOUBLE
section: Scope Module
group: Trig

[ScopeModuleSegmentsMapping]
label: Mapping
datatype: COMBO
combo_def_1: Lin
combo_def_2: Log
combo_def_3: dB
section: Scope Module
group: Trig

[ScopeModuleSegmentsScalingEnable]
label: Scaling Enable
datatype: BOOLEAN
section: Scope Module
group: Trig

[ScopeModuleSegmentsScaling]
label: Scaling
datatype: COMBO
combo_def_1: FS
combo_def_2: Man
combo_def_3: Auto
section: Scope Module
group: Trig

################### Scope Module Advanced Options ###################

### Horizontal ###
[ScopeModuleAdvancedMode]
label: Mode
datatype: COMBO
combo_def_1: Time domain
combo_def_2: Freq. domain
cmd_def_1: 1
cmd_def_2: 3
get_cmd: scopeModule/mode
section: Scope Module
group: Advanced

[ScopeModuleAdvancedFFT]
label: FFT Window
datatype: COMBO
combo_def_1: Rectangular
combo_def_2: Hann
combo_def_3: Hamming
combo_def_4: Blackman Harris
combo_def_5: Exponential (ring down)
combo_def_6: Cosine (ring down)
combo_def_7: Cosine squared (ring down)
section: Scope Module
group: Advanced
state_quant: ScopeModuleAdvancedMode
state_value_1: Freq. domain

[ScopeModuleAdvancedResolution]
label: Resolution (Hz)
datatype: DOUBLE
permission: READ
section: Scope Module
Group: Advanced

[ScopeModuleAdvancedSpectralDensity]
label: Spectral Density
datatype: BOOLEAN
section: Scope Module
group: Advanced
state_quant: ScopeModuleAdvancedMode
state_value_1: Freq. domain

[ScopeModuleAdvancedPower]
label: Power
datatype: BOOLEAN
section: Scope Module
group: Advanced
state_quant: ScopeModuleAdvancedMode
state_value_1: Freq. domain

[ScopeModuleAdvancedPersistance]
label: Persistance
datatype: BOOLEAN
section: Scope Module
group: Advanced

[ScopeModuleAdvancedBWLimitCh1]
label: BW Limit Ch 1
datatype: BOOLEAN
section: Scope Module
group: Advanced
get_cmd: /%s/scopes/0/channels/0/bwlimit

[ScopeModuleAdvancedBWLimitCh2]
label: BW Limit Ch 2
datatype: BOOLEAN
section: Scope Module
group: Advanced
get_cmd: /%s/scopes/0/channels/1/bwlimit
option_value_1: DIG
