# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Zurich Instruments UHF Custom

# The version string should be updated whenever changes are made to this config file
version: 2.2

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Zurich Instruments UHF

startup: Do nothing

[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# List of models supported by this driver
model_str_1: UHF
model_str_2: UHF-old

check_option: false
option_str_1: MOD


# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False

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
#######################################################################
### Signal Inputs #####################################################
#######################################################################

[SigIn1Imp]
label: Input 1 50 ohm
datatype: BOOLEAN
group: Signal Input 1
section: Signal Input
get_cmd: /%s/sigins/0/imp50

[SigIn1AC]
label: Input 1 AC Coupling
datatype: BOOLEAN
group: Signal Input 1
section: Signal Input
get_cmd: /%s/sigins/0/ac

[SigIn1Autorange]
label: Input 1 Range
datatype: BUTTON
group: Signal Input 1
section: Signal Input
get_cmd: /%s/sigins/0/autorange

[SigIn1Range]
label: Input 1 Range
datatype: DOUBLE
unit: V
group: Signal Input 1
section: Signal Input
get_cmd: /%s/sigins/0/range

[SigIn1Scaling]
label: Scaling
datatype: DOUBLE
group: Signal Input 1
section: Signal Input
get_cmd: /%s/sigins/0/scaling

[SigIn2Imp]
label: Input 2 50 ohm
datatype: BOOLEAN
group: Signal Input 2
section: Signal Input
get_cmd: /%s/sigins/1/imp50

[SigIn2AC]
label: Input 2 AC Coupling
datatype: BOOLEAN
group: Signal Input 2
section: Signal Input
get_cmd: /%s/sigins/1/ac

[SigIn2Autorange]
label: Input 2 Range
datatype: BUTTON
group: Signal Input 2
section: Signal Input
get_cmd: /%s/sigins/1/autorange

[SigIn2Range]
label: Input 2 Range
datatype: DOUBLE
unit: V
group: Signal Input 2
section: Signal Input
get_cmd: /%s/sigins/1/range

[SigIn2Scaling]
label: Scaling
datatype: DOUBLE
group: Signal Input 2
section: Signal Input
get_cmd: /%s/sigins/1/scaling

#######################################################
################## LOW PASS FILTER ####################
#######################################################

[LowPassFilter1Order]
label: Order
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
cmd_def_6: 6
cmd_def_7: 7
cmd_def_8: 8
section: Low pass filter
group: Low pass filter 1
get_cmd: /%s/demods/0/order

[LowPassFilter1Unit]
label: Type
datatype: COMBO
combo_def_1: TC
combo_def_2: BW NEP
combo_def_3: BW 3 db
section: Low pass filter
group: Low pass filter 1

[LowPassFilter1TC]
label: Time constant
datatype: DOUBLE
state_quant: LowPassFilter1Unit
state_value_1: TC
section: Low pass filter
group: Low pass filter 1
get_cmd: /%s/demods/0/timeconstant

[LowPassFilter1BwNep]
label: BW NEP
datatype: DOUBLE
state_quant: LowPassFilter1Unit
state_value_1: BW NEP
section: Low pass filter
group: Low pass filter 1
get_cmd: /%s/demods/0/timeconstant

[LowPassFilter1Bw3db]
label: BW 3 db
datatype: DOUBLE
state_quant: LowPassFilter1Unit
state_value_1: BW 3 db
section: Low pass filter
group: Low pass filter 1
get_cmd: /%s/demods/0/timeconstant

[LowPassFilter1Sinc]
label: Sinc
datatype: BOOLEAN
section: Low pass filter
group: Low pass filter 1
get_cmd: /%s/demods/0/sinc

[LowPassFilter2Order]
label: Order
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
cmd_def_6: 6
cmd_def_7: 7
cmd_def_8: 8
section: Low pass filter
group: Low pass filter 2
get_cmd: /%s/demods/1/order

[LowPassFilter2Unit]
label: Type
datatype: COMBO
combo_def_1: TC
combo_def_2: BW NEP
combo_def_3: BW 3 db
section: Low pass filter
group: Low pass filter 2

[LowPassFilter2TC]
label: Time constant
datatype: DOUBLE
state_quant: LowPassFilter2Unit
state_value_1: TC
section: Low pass filter
group: Low pass filter 2
get_cmd: /%s/demods/1/timeconstant

[LowPassFilter2BwNep]
label: BW NEP
datatype: DOUBLE
state_quant: LowPassFilter2Unit
state_value_1: BW NEP
section: Low pass filter
group: Low pass filter 2
get_cmd: /%s/demods/1/timeconstant

[LowPassFilter2Bw3db]
label: BW 3 db
datatype: DOUBLE
state_quant: LowPassFilter2Unit
state_value_1: BW 3 db
section: Low pass filter
group: Low pass filter 2
get_cmd: /%s/demods/1/timeconstant

[LowPassFilter2Sinc]
label: Sinc
datatype: BOOLEAN
section: Low pass filter
group: Low pass filter 2
get_cmd: /%s/demods/1/sinc

[LowPassFilter3Order]
label: Order
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
cmd_def_6: 6
cmd_def_7: 7
cmd_def_8: 8
section: Low pass filter
group: Low pass filter 3
get_cmd: /%s/demods/2/order

[LowPassFilter3Unit]
label: Type
datatype: COMBO
combo_def_1: TC
combo_def_2: BW NEP
combo_def_3: BW 3 db
section: Low pass filter
group: Low pass filter 3

[LowPassFilter3TC]
label: Time constant
datatype: DOUBLE
state_quant: LowPassFilter3Unit
state_value_1: TC
section: Low pass filter
group: Low pass filter 3
get_cmd: /%s/demods/2/timeconstant

[LowPassFilter3BwNep]
label: BW NEP
datatype: DOUBLE
state_quant: LowPassFilter3Unit
state_value_1: BW NEP
section: Low pass filter
group: Low pass filter 3
get_cmd: /%s/demods/2/timeconstant

[LowPassFilter3Bw3db]
label: BW 3 db
datatype: DOUBLE
state_quant: LowPassFilter3Unit
state_value_1: BW 3 db
section: Low pass filter
group: Low pass filter 3
get_cmd: /%s/demods/2/timeconstant

[LowPassFilter3Sinc]
label: Sinc
datatype: BOOLEAN
section: Low pass filter
group: Low pass filter 3
get_cmd: /%s/demods/2/sinc

[LowPassFilter4Order]
label: Order
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
cmd_def_6: 6
cmd_def_7: 7
cmd_def_8: 8
section: Low pass filter
group: Low pass filter 4
get_cmd: /%s/demods/3/order

[LowPassFilter4Unit]
label: Type
datatype: COMBO
combo_def_1: TC
combo_def_2: BW NEP
combo_def_3: BW 3 db
section: Low pass filter
group: Low pass filter 4

[LowPassFilter4TC]
label: Time constant
datatype: DOUBLE
state_quant: LowPassFilter4Unit
state_value_1: TC
section: Low pass filter
group: Low pass filter 4
get_cmd: /%s/demods/3/timeconstant

[LowPassFilter4BwNep]
label: BW NEP
datatype: DOUBLE
state_quant: LowPassFilter4Unit
state_value_1: BW NEP
section: Low pass filter
group: Low pass filter 4
get_cmd: /%s/demods/3/timeconstant

[LowPassFilter4Bw3db]
label: BW 3 db
datatype: DOUBLE
state_quant: LowPassFilter4Unit
state_value_1: BW 3 db
section: Low pass filter
group: Low pass filter 4
get_cmd: /%s/demods/3/timeconstant

[LowPassFilter4Sinc]
label: Sinc
datatype: BOOLEAN
section: Low pass filter
group: Low pass filter 4
get_cmd: /%s/demods/3/sinc

[LowPassFilter5Order]
label: Order
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
cmd_def_6: 6
cmd_def_7: 7
cmd_def_8: 8
section: Low pass filter
group: Low pass filter 5
get_cmd: /%s/demods/4/order

[LowPassFilter5Unit]
label: Type
datatype: COMBO
combo_def_1: TC
combo_def_2: BW NEP
combo_def_3: BW 3 db
section: Low pass filter
group: Low pass filter 5

[LowPassFilter5TC]
label: Time constant
datatype: DOUBLE
state_quant: LowPassFilter5Unit
state_value_1: TC
section: Low pass filter
group: Low pass filter 5
get_cmd: /%s/demods/4/timeconstant

[LowPassFilter5BwNep]
label: BW NEP
datatype: DOUBLE
state_quant: LowPassFilter5Unit
state_value_1: BW NEP
section: Low pass filter
group: Low pass filter 5
get_cmd: /%s/demods/4/timeconstant

[LowPassFilter5Bw3db]
label: BW 3 db
datatype: DOUBLE
state_quant: LowPassFilter5Unit
state_value_1: BW 3 db
section: Low pass filter
group: Low pass filter 5
get_cmd: /%s/demods/4/timeconstant

[LowPassFilter5Sinc]
label: Sinc
datatype: BOOLEAN
section: Low pass filter
group: Low pass filter 5
get_cmd: /%s/demods/4/sinc

[LowPassFilter6Order]
label: Order
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
cmd_def_6: 6
cmd_def_7: 7
cmd_def_8: 8
section: Low pass filter
group: Low pass filter 6
get_cmd: /%s/demods/5/order

[LowPassFilter6Unit]
label: Type
datatype: COMBO
combo_def_1: TC
combo_def_2: BW NEP
combo_def_3: BW 3 db
section: Low pass filter
group: Low pass filter 6

[LowPassFilter6TC]
label: Time constant
datatype: DOUBLE
state_quant: LowPassFilter6Unit
state_value_1: TC
section: Low pass filter
group: Low pass filter 6
get_cmd: /%s/demods/5/timeconstant

[LowPassFilter6BwNep]
label: BW NEP
datatype: DOUBLE
state_quant: LowPassFilter6Unit
state_value_1: BW NEP
section: Low pass filter
group: Low pass filter 6
get_cmd: /%s/demods/5/timeconstant

[LowPassFilter6Bw3db]
label: BW 3 db
datatype: DOUBLE
state_quant: LowPassFilter6Unit
state_value_1: BW 3 db
section: Low pass filter
group: Low pass filter 6
get_cmd: /%s/demods/5/timeconstant

[LowPassFilter6Sinc]
label: Sinc
datatype: BOOLEAN
section: Low pass filter
group: Low pass filter 6
get_cmd: /%s/demods/5/sinc

[LowPassFilter7Order]
label: Order
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
cmd_def_6: 6
cmd_def_7: 7
cmd_def_8: 8
section: Low pass filter
group: Low pass filter 7
get_cmd: /%s/demods/6/order

[LowPassFilter7Unit]
label: Type
datatype: COMBO
combo_def_1: TC
combo_def_2: BW NEP
combo_def_3: BW 3 db
section: Low pass filter
group: Low pass filter 7

[LowPassFilter7TC]
label: Time constant
datatype: DOUBLE
state_quant: LowPassFilter7Unit
state_value_1: TC
section: Low pass filter
group: Low pass filter 7
get_cmd: /%s/demods/6/timeconstant

[LowPassFilter7BwNep]
label: BW NEP
datatype: DOUBLE
state_quant: LowPassFilter7Unit
state_value_1: BW NEP
section: Low pass filter
group: Low pass filter 7
get_cmd: /%s/demods/6/timeconstant

[LowPassFilter7Bw3db]
label: BW 3 db
datatype: DOUBLE
state_quant: LowPassFilter7Unit
state_value_1: BW 3 db
section: Low pass filter
group: Low pass filter 7
get_cmd: /%s/demods/6/timeconstant

[LowPassFilter7Sinc]
label: Sinc
datatype: BOOLEAN
section: Low pass filter
group: Low pass filter 7
get_cmd: /%s/demods/6/sinc

[LowPassFilter8Order]
label: Order
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
cmd_def_6: 6
cmd_def_7: 7
cmd_def_8: 8
section: Low pass filter
group: Low pass filter 8
get_cmd: /%s/demods/7/order

[LowPassFilter8Unit]
label: Type
datatype: COMBO
combo_def_1: TC
combo_def_2: BW NEP
combo_def_3: BW 3 db
section: Low pass filter
group: Low pass filter 8

[LowPassFilter8TC]
label: Time constant
datatype: DOUBLE
state_quant: LowPassFilter8Unit
state_value_1: TC
section: Low pass filter
group: Low pass filter 8
get_cmd: /%s/demods/7/timeconstant

[LowPassFilter8BwNep]
label: BW NEP
datatype: DOUBLE
state_quant: LowPassFilter8Unit
state_value_1: BW NEP
section: Low pass filter
group: Low pass filter 8
get_cmd: /%s/demods/7/timeconstant

[LowPassFilter8Bw3db]
label: BW 3 db
datatype: DOUBLE
state_quant: LowPassFilter8Unit
state_value_1: BW 3 db
section: Low pass filter
group: Low pass filter 8
get_cmd: /%s/demods/7/timeconstant

[LowPassFilter8Sinc]
label: Sinc
datatype: BOOLEAN
section: Low pass filter
group: Low pass filter 8
get_cmd: /%s/demods/7/sinc

###################################################
############### Output Amplitudes #################
###################################################

[OutputAmplitudes1Value1Enable]
label: Enable amplitude 1
datatype: BOOLEAN
section: Output Amplitudes
group: Output Amplitudes 1
get_cmd: /%s/sigouts/0/enables/0

[OutputAmplitudes1Value1]
label: AMP 1
datatype: DOUBLE
section: Output Amplitudes
group: Output Amplitudes 1
get_cmd: /%s/sigouts/0/amplitudes/0

[OutputAmplitudes1Value2Enable]
label: Enable amplitude 2
datatype: BOOLEAN
section: Output Amplitudes
group: Output Amplitudes 1
get_cmd: /%s/sigouts/1/enables/0

[OutputAmplitudes1Value2]
label: AMP 2
datatype: DOUBLE
section: Output Amplitudes
group: Output Amplitudes 1
get_cmd: /%s/sigouts/1/amplitudes/0

[OutputAmplitudes2Value1Enable]
label: Enable amplitude 1
datatype: BOOLEAN
section: Output Amplitudes
group: Output Amplitudes 2
get_cmd: /%s/sigouts/0/enables/1

[OutputAmplitudes2Value1]
label: AMP 1
datatype: DOUBLE
section: Output Amplitudes
group: Output Amplitudes 2
get_cmd: /%s/sigouts/0/amplitudes/1

[OutputAmplitudes2Value2Enable]
label: Enable amplitude 2
datatype: BOOLEAN
section: Output Amplitudes
group: Output Amplitudes 2
get_cmd: /%s/sigouts/1/enables/1

[OutputAmplitudes2Value2]
label: AMP 2
datatype: DOUBLE
section: Output Amplitudes
group: Output Amplitudes 2
get_cmd: /%s/sigouts/1/amplitudes/1

[OutputAmplitudes3Value1Enable]
label: Enable amplitude 1
datatype: BOOLEAN
section: Output Amplitudes
group: Output Amplitudes 3
get_cmd: /%s/sigouts/0/enables/2

[OutputAmplitudes3Value1]
label: AMP 1
datatype: DOUBLE
section: Output Amplitudes
group: Output Amplitudes 3
get_cmd: /%s/sigouts/0/amplitudes/2

[OutputAmplitudes3Value2Enable]
label: Enable amplitude 2
datatype: BOOLEAN
section: Output Amplitudes
group: Output Amplitudes 3
get_cmd: /%s/sigouts/1/enables/2

[OutputAmplitudes3Value2]
label: AMP 2
datatype: DOUBLE
section: Output Amplitudes
group: Output Amplitudes 3
get_cmd: /%s/sigouts/1/amplitudes/2

[OutputAmplitudes4Value1Enable]
label: Enable amplitude 1
datatype: BOOLEAN
section: Output Amplitudes
group: Output Amplitudes 4
get_cmd: /%s/sigouts/0/enables/3

[OutputAmplitudes4Value1]
label: AMP 1
datatype: DOUBLE
section: Output Amplitudes
group: Output Amplitudes 4
get_cmd: /%s/sigouts/0/amplitudes/3

[OutputAmplitudes4Value2Enable]
label: Enable amplitude 2
datatype: BOOLEAN
section: Output Amplitudes
group: Output Amplitudes 4
get_cmd: /%s/sigouts/1/enables/3

[OutputAmplitudes4Value2]
label: AMP 2
datatype: DOUBLE
section: Output Amplitudes
group: Output Amplitudes 4
get_cmd: /%s/sigouts/1/amplitudes/3

[OutputAmplitudes5Value1Enable]
label: Enable amplitude 1
datatype: BOOLEAN
section: Output Amplitudes
group: Output Amplitudes 5
get_cmd: /%s/sigouts/0/enables/4

[OutputAmplitudes5Value1]
label: AMP 1
datatype: DOUBLE
section: Output Amplitudes
group: Output Amplitudes 5
get_cmd: /%s/sigouts/0/amplitudes/4

[OutputAmplitudes5Value2Enable]
label: Enable amplitude 2
datatype: BOOLEAN
section: Output Amplitudes
group: Output Amplitudes 5
get_cmd: /%s/sigouts/1/enables/4

[OutputAmplitudes5Value2]
label: AMP 2
datatype: DOUBLE
section: Output Amplitudes
group: Output Amplitudes 5
get_cmd: /%s/sigouts/1/amplitudes/4

[OutputAmplitudes6Value1Enable]
label: Enable amplitude 1
datatype: BOOLEAN
section: Output Amplitudes
group: Output Amplitudes 6
get_cmd: /%s/sigouts/0/enables/5

[OutputAmplitudes6Value1]
label: AMP 1
datatype: DOUBLE
section: Output Amplitudes
group: Output Amplitudes 6
get_cmd: /%s/sigouts/0/amplitudes/5

[OutputAmplitudes6Value2Enable]
label: Enable amplitude 2
datatype: BOOLEAN
section: Output Amplitudes
group: Output Amplitudes 6
get_cmd: /%s/sigouts/1/enables/5

[OutputAmplitudes6Value2]
label: AMP 2
datatype: DOUBLE
section: Output Amplitudes
group: Output Amplitudes 6
get_cmd: /%s/sigouts/1/amplitudes/5

[OutputAmplitudes7Value1Enable]
label: Enable amplitude 1
datatype: BOOLEAN
section: Output Amplitudes
group: Output Amplitudes 7
get_cmd: /%s/sigouts/0/enables/6

[OutputAmplitudes7Value1]
label: AMP 1
datatype: DOUBLE
section: Output Amplitudes
group: Output Amplitudes 7
get_cmd: /%s/sigouts/0/amplitudes/6

[OutputAmplitudes7Value2Enable]
label: Enable amplitude 2
datatype: BOOLEAN
section: Output Amplitudes
group: Output Amplitudes 7
get_cmd: /%s/sigouts/1/enables/6

[OutputAmplitudes7Value2]
label: AMP 2
datatype: DOUBLE
section: Output Amplitudes
group: Output Amplitudes 7
get_cmd: /%s/sigouts/1/amplitudes/6

[OutputAmplitudes8Value1Enable]
label: Enable amplitude 1
datatype: BOOLEAN
section: Output Amplitudes
group: Output Amplitudes 8
get_cmd: /%s/sigouts/0/enables/7

[OutputAmplitudes8Value1]
label: AMP 1
datatype: DOUBLE
section: Output Amplitudes
group: Output Amplitudes 8
get_cmd: /%s/sigouts/0/amplitudes/7

[OutputAmplitudes8Value2Enable]
label: Enable amplitude 2
datatype: BOOLEAN
section: Output Amplitudes
group: Output Amplitudes 8
get_cmd: /%s/sigouts/1/enables/7

[OutputAmplitudes8Value2]
label: AMP 2
datatype: DOUBLE
section: Output Amplitudes
group: Output Amplitudes 8
get_cmd: /%s/sigouts/1/amplitudes/7

####################################################
################### Oscillators ####################
####################################################

[Oscillator1Frequency]
label: Oscillator 1 Frequency
datatype: DOUBLE
unit: Hz
group: Oscillator 1
section: Oscillator
get_cmd: /%s/oscs/0/freq

[Oscillator2Frequency]
label: Oscillator 2 Frequency
datatype: DOUBLE
unit: Hz
group: Oscillator 2
section: Oscillator
get_cmd: /%s/oscs/1/freq

[Oscillator3Frequency]
label: Oscillator 3 Frequency
datatype: DOUBLE
unit: Hz
group: Oscillator 3
section: Oscillator
get_cmd: /%s/oscs/2/freq
model_value_1: UHF

[Oscillator4Frequency]
label: Oscillator 4 Frequency
datatype: DOUBLE
unit: Hz
group: Oscillator 4
section: Oscillator
get_cmd: /%s/oscs/3/freq
model_value_1: UHF

[Oscillator5Frequency]
label: Oscillator 5 Frequency
datatype: DOUBLE
unit: Hz
group: Oscillator 5
section: Oscillator
get_cmd: /%s/oscs/4/freq
model_value_1: UHF

[Oscillator6Frequency]
label: Oscillator 6 Frequency
datatype: DOUBLE
unit: Hz
group: Oscillator 6
section: Oscillator
get_cmd: /%s/oscs/5/freq
model_value_1: UHF

[Oscillator7Frequency]
label: Oscillator 7 Frequency
datatype: DOUBLE
unit: Hz
group: Oscillator 7
section: Oscillator
get_cmd: /%s/oscs/6/freq
model_value_1: UHF

[Oscillator8Frequency]
label: Oscillator 8 Frequency
datatype: DOUBLE
unit: Hz
group: Oscillator 8
section: Oscillator
get_cmd: /%s/oscs/7/freq
model_value_1: UHF


#######################################################################
### Signal Outputs ####################################################
#######################################################################

[SigOut1On]
label: Signal Out 1 On
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/on

[SigOut1Offset]
label: Signal Out 1 Offset
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/offset

[SigOut1Autorange]
label: Autorange
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/autorange

[SigOut1Range]
label: Signal Out 1 Range
datatype: COMBO
combo_def_1: 150 mV
combo_def_2: 1.5 V
cmd_def_1: 0.15
cmd_def_2: 1.5
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/range

[SigOut1Imp]
label: 50 ohm
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/imp50

[Out1SigOut1On]
label: Output 1 to Signal Out 1
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/enables/0
model_value_1: UHF

[Out1SigOut1Amp]
label: Amplitude 1 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/amplitudes/0
model_value_1: UHF

[Out2SigOut1On]
label: Output 2 to Signal Out 1
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/enables/1
model_value_1: UHF

[Out2SigOut1Amp]
label: Amplitude 2 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/amplitudes/1
model_value_1: UHF

[Out3SigOut1On]
label: Output 3 to Signal Out 1
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/enables/2
model_value_1: UHF

[Out3SigOut1Amp]
label: Amplitude 3 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/amplitudes/2
model_value_1: UHF

[Out4SigOut1On]
label: Output 4 to Signal Out 1
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/enables/3

[Out4SigOut1Amp]
label: Amplitude 4 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/amplitudes/3

[Out5SigOut1On]
label: Output 5 to Signal Out 1
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/enables/4
model_value_1: UHF

[Out5SigOut1Amp]
label: Amplitude 5 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/amplitudes/4
model_value_1: UHF

[Out6SigOut1On]
label: Output 6 to Signal Out 1
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/enables/5
model_value_1: UHF

[Out6SigOut1Amp]
label: Amplitude 6 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/amplitudes/5
model_value_1: UHF

[Out7SigOut1On]
label: Output 7 to Signal Out 1
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/enables/6
model_value_1: UHF

[Out7SigOut1Amp]
label: Amplitude 7 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/amplitudes/6
model_value_1: UHF

[Out8SigOut1On]
label: Output 8 to Signal Out 1
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/enables/7
model_value_1: UHF

[Out8SigOut1Amp]
label: Amplitude 8 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/amplitudes/7
model_value_1: UHF

[SigOut2On]
label: Signal Out 2 On
datatype: BOOLEAN
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/on

[SigOut2Offset]
label: Signal Out 2 Offset
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/offset

[SigOut2Autorange]
label: Autorange
datatype: BOOLEAN
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/autorange

[SigOut2Range]
label: Signal Out 2 Range
datatype: COMBO
combo_def_1: 150 mV
combo_def_2: 1.5 V
cmd_def_1: 0.15
cmd_def_2: 1.5
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/range

[SigOut2Imp]
label: 50 ohm
datatype: BOOLEAN
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/imp50

[Out1SigOut2On]
label: Output 1 to Signal Out 2
datatype: BOOLEAN
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/enables/0
model_value_1: UHF

[Out1SigOut2Amp]
label: Amplitude 1 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/amplitudes/0
model_value_1: UHF

[Out2SigOut2On]
label: Output 2 to Signal Out 2
datatype: BOOLEAN
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/enables/1
model_value_1: UHF

[Out2SigOut2Amp]
label: Amplitude 2 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/amplitudes/1
model_value_1: UHF

[Out3SigOut2On]
label: Output 3 to Signal Out 2
datatype: BOOLEAN
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/enables/2
model_value_1: UHF

[Out3SigOut2Amp]
label: Amplitude 3 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/amplitudes/2
model_value_1: UHF

[Out4SigOut2On]
label: Output 4 to Signal Out 2
datatype: BOOLEAN
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/enables/3
model_value_1: UHF

[Out4SigOut2Amp]
label: Amplitude 4 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/amplitudes/3
model_value_1: UHF

[Out5SigOut2On]
label: Output 5 to Signal Out 2
datatype: BOOLEAN
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/enables/4
model_value_1: UHF

[Out5SigOut2Amp]
label: Amplitude 5 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/amplitudes/4
model_value_1: UHF

[Out6SigOut2On]
label: Output 6 to Signal Out 2
datatype: BOOLEAN
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/enables/5
model_value_1: UHF

[Out6SigOut2Amp]
label: Amplitude 6 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/amplitudes/5
model_value_1: UHF

[Out7SigOut2On]
label: Output 7 to Signal Out 2
datatype: BOOLEAN
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/enables/6
model_value_1: UHF

[Out7SigOut2Amp]
label: Amplitude 7 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/amplitudes/6
model_value_1: UHF

[Out8SigOut2On]
label: Output 8 to Signal Out 2
datatype: BOOLEAN
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/enables/7

[Out8SigOut2Amp]
label: Amplitude 8 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/amplitudes/7

##############################################################################
############################## Data acquisition ##############################
##############################################################################
[DAQMethod]
label: Data acquisition method
datatype: COMBO
combo_def_1: getSample()
combo_def_2: poll()
section: Demodulator
group: Data Acquisition
get_cmd:

[PollRecordingTime]
label: Recording time
datatype: DOUBLE
def_value: 0.2
unit: s
section: Demodulator
group: Data Acquisition
state_quant: DAQMethod
state_value_1: poll()

[PollTimeout]
label: Timeout
datatype: DOUBLE
def_value: 2
unit: s
section: Demodulator
group: Data Acquisition
state_quant: DAQMethod
state_value_1: poll()

#######################################################################
### Demodulator read-out channels #####################################
#######################################################################
[Demod1On]
label: Demodulator 1 Enabled
datatype: BOOLEAN
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/enable

[Demod1X]
label: Demodulator 1 X
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/sample
state_quant: Demod1On
state_value_1: True
show_in_measurement_dlg: True

[Demod1Y]
label: Demodulator 1 Y
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/sample
state_quant: Demod1On
state_value_1: True
show_in_measurement_dlg: True

[Demod1R]
label: Demodulator 1 R
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/sample
state_quant: Demod1On
state_value_1: True
show_in_measurement_dlg: True

[Demod1phi]
label: Demodulator 1 Phi
datatype: DOUBLE
unit: deg
permission: READ
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/sample
state_quant: Demod1On
state_value_1: True
show_in_measurement_dlg: True

[Demod2On]
label: Demodulator 2 Enabled
datatype: BOOLEAN
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/enable

[Demod2X]
label: Demodulator 2 X
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/sample
state_quant: Demod2On
state_value_1: True
show_in_measurement_dlg: True

[Demod2Y]
label: Demodulator 2 Y
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/sample
state_quant: Demod2On
state_value_1: True
show_in_measurement_dlg: True

[Demod2R]
label: Demodulator 2 R
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/sample
state_quant: Demod2On
state_value_1: True
show_in_measurement_dlg: True

[Demod2phi]
label: Demodulator 2 Phi
datatype: DOUBLE
unit: deg
permission: READ
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/sample
state_quant: Demod2On
state_value_1: True
show_in_measurement_dlg: True

[Demod3On]
label: Demodulator 3 Enabled
datatype: BOOLEAN
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/enable

[Demod3X]
label: Demodulator 3 X
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/sample
state_quant: Demod3On
state_value_1: True
show_in_measurement_dlg: True

[Demod3Y]
label: Demodulator 3 Y
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/sample
state_quant: Demod3On
state_value_1: True
show_in_measurement_dlg: True

[Demod3R]
label: Demodulator 3 R
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/sample
state_quant: Demod3On
state_value_1: True
show_in_measurement_dlg: True

[Demod3phi]
label: Demodulator 3 Phi
datatype: DOUBLE
unit: deg
permission: READ
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/sample
state_quant: Demod3On
state_value_1: True
show_in_measurement_dlg: True

[Demod4On]
label: Demodulator 4 Enabled
datatype: BOOLEAN
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/enable

[Demod4X]
label: Demodulator 4 X
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/sample
state_quant: Demod4On
state_value_1: True
show_in_measurement_dlg: True

[Demod4Y]
label: Demodulator 4 Y
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/sample
state_quant: Demod4On
state_value_1: True
show_in_measurement_dlg: True

[Demod4R]
label: Demodulator 4 R
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/sample
state_quant: Demod4On
state_value_1: True
show_in_measurement_dlg: True

[Demod4phi]
label: Demodulator 4 Phi
datatype: DOUBLE
unit: deg
permission: READ
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/sample
state_quant: Demod4On
state_value_1: True
show_in_measurement_dlg: True

[Demod5On]
label: Demodulator 5 Enabled
datatype: BOOLEAN
group: Demodulator 5
section: Demodulator
get_cmd: /%s/demods/4/enable

[Demod5X]
label: Demodulator 5 X
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 5
section: Demodulator
get_cmd: /%s/demods/4/sample
state_quant: Demod5On
state_value_1: True
show_in_measurement_dlg: True

[Demod5Y]
label: Demodulator 5 Y
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 5
section: Demodulator
get_cmd: /%s/demods/4/sample
state_quant: Demod5On
state_value_1: True
show_in_measurement_dlg: True

[Demod5R]
label: Demodulator 5 R
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 5
section: Demodulator
get_cmd: /%s/demods/4/sample
state_quant: Demod5On
state_value_1: True
show_in_measurement_dlg: True

[Demod5phi]
label: Demodulator 5 Phi
datatype: DOUBLE
unit: deg
permission: READ
group: Demodulator 5
section: Demodulator
get_cmd: /%s/demods/4/sample
state_quant: Demod5On
state_value_1: True
show_in_measurement_dlg: True

[Demod6On]
label: Demodulator 6 Enabled
datatype: BOOLEAN
group: Demodulator 6
section: Demodulator
get_cmd: /%s/demods/5/enable

[Demod6X]
label: Demodulator 6 X
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 6
section: Demodulator
get_cmd: /%s/demods/5/sample
state_quant: Demod6On
state_value_1: True
show_in_measurement_dlg: True

[Demod6Y]
label: Demodulator 6 Y
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 6
section: Demodulator
get_cmd: /%s/demods/5/sample
state_quant: Demod6On
state_value_1: True
show_in_measurement_dlg: True

[Demod6R]
label: Demodulator 6 R
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 6
section: Demodulator
get_cmd: /%s/demods/5/sample
state_quant: Demod6On
state_value_1: True
show_in_measurement_dlg: True

[Demod6phi]
label: Demodulator 6 Phi
datatype: DOUBLE
unit: deg
permission: READ
group: Demodulator 6
section: Demodulator
get_cmd: /%s/demods/5/sample
state_quant: Demod6On
state_value_1: True
show_in_measurement_dlg: True

[Demod7On]
label: Demodulator 7 Enabled
datatype: BOOLEAN
group: Demodulator 7
section: Demodulator
get_cmd: /%s/demods/6/enable

[Demod7X]
label: Demodulator 7 X
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 7
section: Demodulator
get_cmd: /%s/demods/6/sample
state_quant: Demod7On
state_value_1: True
show_in_measurement_dlg: True

[Demod7Y]
label: Demodulator 7 Y
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 7
section: Demodulator
get_cmd: /%s/demods/6/sample
state_quant: Demod7On
state_value_1: True
show_in_measurement_dlg: True

[Demod7R]
label: Demodulator 7 R
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 7
section: Demodulator
get_cmd: /%s/demods/6/sample
state_quant: Demod7On
state_value_1: True
show_in_measurement_dlg: True

[Demod7phi]
label: Demodulator 7 Phi
datatype: DOUBLE
unit: deg
permission: READ
group: Demodulator 7
section: Demodulator
get_cmd: /%s/demods/6/sample
state_quant: Demod7On
state_value_1: True
show_in_measurement_dlg: True

[Demod8On]
label: Demodulator 8 Enabled
datatype: BOOLEAN
group: Demodulator 8
section: Demodulator
get_cmd: /%s/demods/7/enable

[Demod8X]
label: Demodulator 8 X
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 8
section: Demodulator
get_cmd: /%s/demods/7/sample
state_quant: Demod8On
state_value_1: True
show_in_measurement_dlg: True

[Demod8Y]
label: Demodulator 8 Y
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 8
section: Demodulator
get_cmd: /%s/demods/7/sample
state_quant: Demod8On
state_value_1: True
show_in_measurement_dlg: True

[Demod8R]
label: Demodulator 8 R
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 8
section: Demodulator
get_cmd: /%s/demods/7/sample
state_quant: Demod8On
state_value_1: True
show_in_measurement_dlg: True

[Demod8phi]
label: Demodulator 8 Phi
datatype: DOUBLE
unit: deg
permission: READ
group: Demodulator 8
section: Demodulator
get_cmd: /%s/demods/7/sample
state_quant: Demod8On
state_value_1: True
show_in_measurement_dlg: True



#######################################################################
### Demodulator settings ##############################################
#######################################################################

[Demod1Osc]
label: Demodulator 1 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/oscselect

[Demod1RefPhase]
label: Demodulator 1 Reference Phase
datatype: DOUBLE
unit: deg
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/phaseshift

[Demod1TC]
label: Demodulator 1 Time Constant
datatype: DOUBLE
unit: s
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/timeconstant

[Demod2Osc]
label: Demodulator 2 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/oscselect

[Demod2RefPhase]
label: Demodulator 2 Reference Phase
datatype: DOUBLE
unit: deg
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/phaseshift

[Demod2TC]
label: Demodulator 2 Time Constant
datatype: DOUBLE
unit: s
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/timeconstant

[Demod3Osc]
label: Demodulator 3 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/oscselect

[Demod3RefPhase]
label: Demodulator 3 Reference Phase
datatype: DOUBLE
unit: deg
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/phaseshift

[Demod3TC]
label: Demodulator 3 Time Constant
datatype: DOUBLE
unit: s
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/timeconstant

[Demod4Osc]
label: Demodulator 4 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/oscselect

[Demod4RefPhase]
label: Demodulator 4 Reference Phase
datatype: DOUBLE
unit: deg
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/phaseshift

[Demod4TC]
label: Demodulator 4 Time Constant
datatype: DOUBLE
unit: s
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/timeconstant

[Demod5Osc]
label: Demodulator 5 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Demodulator 5
section: Demodulator
get_cmd: /%s/demods/4/oscselect

[Demod5RefPhase]
label: Demodulator 5 Reference Phase
datatype: DOUBLE
unit: deg
group: Demodulator 5
section: Demodulator
get_cmd: /%s/demods/4/phaseshift

[Demod5TC]
label: Demodulator 5 Time Constant
datatype: DOUBLE
unit: s
group: Demodulator 5
section: Demodulator
get_cmd: /%s/demods/4/timeconstant

[Demod6Osc]
label: Demodulator 6 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Demodulator 6
section: Demodulator
get_cmd: /%s/demods/5/oscselect

[Demod6RefPhase]
label: Demodulator 6 Reference Phase
datatype: DOUBLE
unit: deg
group: Demodulator 6
section: Demodulator
get_cmd: /%s/demods/5/phaseshift

[Demod6TC]
label: Demodulator 6 Time Constant
datatype: DOUBLE
unit: s
group: Demodulator 6
section: Demodulator
get_cmd: /%s/demods/5/timeconstant

[Demod7Osc]
label: Demodulator 7 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Demodulator 7
section: Demodulator
get_cmd: /%s/demods/6/oscselect

[Demod7RefPhase]
label: Demodulator 7 Reference Phase
datatype: DOUBLE
unit: deg
group: Demodulator 7
section: Demodulator
get_cmd: /%s/demods/6/phaseshift

[Demod7TC]
label: Demodulator 7 Time Constant
datatype: DOUBLE
unit: s
group: Demodulator 7
section: Demodulator
get_cmd: /%s/demods/6/timeconstant

[Demod8Osc]
label: Demodulator 8 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Demodulator 8
section: Demodulator
get_cmd: /%s/demods/7/oscselect

[Demod8RefPhase]
label: Demodulator 8 Reference Phase
datatype: DOUBLE
unit: deg
group: Demodulator 8
section: Demodulator
get_cmd: /%s/demods/7/phaseshift

[Demod8TC]
label: Demodulator 8 Time Constant
datatype: DOUBLE
unit: s
group: Demodulator 8
section: Demodulator
get_cmd: /%s/demods/7/timeconstant


#######################################################################
### Trace channels ####################################################
#######################################################################

[TraceLength]
label: Trace Length
datatype: DOUBLE
unit: s
section: Trace

[TraceStep]
label: Trace Step
tooltip: If enabled, during the trace the channel defined in TraceStepChannel will be set to TraceStepSetpointA after TraceStepDelayA and then to TraceStepSetpointB after TraceStepDelayB.
datatype: BOOLEAN
def_value: False
group: Trace Step
section: Trace

[TraceStepChannel]
label: Trace Step Channel
tooltip: If enabled, during the trace the channel defined in TraceStepChannel will be set to TraceStepSetpointA after TraceStepDelayA and then to TraceStepSetpointB after TraceStepDelayB.
datatype: COMBO
combo_def_1: Oscillator 1 Frequency
combo_def_2: Oscillator 2 Frequency
combo_def_3: Oscillator 3 Frequency
combo_def_4: Oscillator 4 Frequency
combo_def_5: Oscillator 5 Frequency
combo_def_6: Oscillator 6 Frequency
combo_def_7: Oscillator 7 Frequency
combo_def_8: Oscillator 8 Frequency
combo_def_9: Output 1 Amplitude 1
combo_def_10: Output 1 Amplitude 2
combo_def_11: Output 1 Amplitude 3
combo_def_12: Output 1 Amplitude 4
combo_def_13: Output 1 Amplitude 5
combo_def_14: Output 1 Amplitude 6
combo_def_15: Output 1 Amplitude 7
combo_def_16: Output 1 Amplitude 8
combo_def_17: Output 2 Amplitude 1
combo_def_18: Output 2 Amplitude 2
combo_def_19: Output 2 Amplitude 3
combo_def_20: Output 2 Amplitude 4
combo_def_21: Output 2 Amplitude 5
combo_def_22: Output 2 Amplitude 6
combo_def_23: Output 2 Amplitude 7
combo_def_24: Output 2 Amplitude 8
cmd_def_1: /%s/oscs/0/freq
cmd_def_2: /%s/oscs/1/freq
cmd_def_3: /%s/oscs/2/freq
cmd_def_4: /%s/oscs/3/freq
cmd_def_5: /%s/oscs/4/freq
cmd_def_6: /%s/oscs/5/freq
cmd_def_7: /%s/oscs/6/freq
cmd_def_8: /%s/oscs/7/freq
cmd_def_9: /%s/sigouts/0/amplitudes/0
cmd_def_10: /%s/sigouts/0/amplitudes/1
cmd_def_11: /%s/sigouts/0/amplitudes/2
cmd_def_12: /%s/sigouts/0/amplitudes/3
cmd_def_13: /%s/sigouts/0/amplitudes/4
cmd_def_14: /%s/sigouts/0/amplitudes/5
cmd_def_15: /%s/sigouts/0/amplitudes/6
cmd_def_16: /%s/sigouts/0/amplitudes/7
cmd_def_17: /%s/sigouts/1/amplitudes/0
cmd_def_18: /%s/sigouts/1/amplitudes/1
cmd_def_19: /%s/sigouts/1/amplitudes/2
cmd_def_20: /%s/sigouts/1/amplitudes/3
cmd_def_21: /%s/sigouts/1/amplitudes/4
cmd_def_22: /%s/sigouts/1/amplitudes/5
cmd_def_23: /%s/sigouts/1/amplitudes/6
cmd_def_24: /%s/sigouts/1/amplitudes/7
state_quant: TraceStep
state_value_1: True
group: Trace Step
section: Trace

[TraceStepSetpointA]
label: Trace Step Setpoint A
tooltip: If enabled, during the trace the channel defined in TraceStepChannel will be set to TraceStepSetpointA after TraceStepDelayA and then to TraceStepSetpointB after TraceStepDelayB.
datatype: DOUBLE
state_quant: TraceStep
state_value_1: True
group: Trace Step
section: Trace

[TraceStepDelayA]
label: Trace Step Delay A
tooltip: If enabled, during the trace the channel defined in TraceStepChannel will be set to TraceStepSetpointA after TraceStepDelayA and then to TraceStepSetpointB after TraceStepDelayB.
datatype: DOUBLE
unit: s
state_quant: TraceStep
state_value_1: True
group: Trace Step
section: Trace

[TraceStepSetpointB]
label: Trace Step Setpoint B
tooltip: If enabled, during the trace the channel defined in TraceStepChannel will be set to TraceStepSetpointA after TraceStepDelayA and then to TraceStepSetpointB after TraceStepDelayB.
datatype: DOUBLE
state_quant: TraceStep
state_value_1: True
group: Trace Step
section: Trace

[TraceStepDelayB]
label: Trace Step Delay B
tooltip: If enabled, during the trace the channel defined in TraceStepChannel will be set to TraceStepSetpointA after TraceStepDelayA and then to TraceStepSetpointB after TraceStepDelayB.
datatype: DOUBLE
unit: s
state_quant: TraceStep
state_value_1: True
group: Trace Step
section: Trace

[Demod1SampleRate]
label: Demodulator 1 Sample Rate
datatype: DOUBLE
unit: Sa/s
group: Trace Demodulator 1
section: Trace
get_cmd: /%s/demods/0/rate

[TraceDemod1X]
label: Demodulator 1 X
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 1
section: Trace
get_cmd: /%s/demods/0/sample
state_quant: Demod1On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod1Y]
label: Demodulator 1 Y
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 1
section: Trace
get_cmd: /%s/demods/0/sample
state_quant: Demod1On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod1R]
label: Demodulator 1 R
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 1
section: Trace
get_cmd: /%s/demods/0/sample
state_quant: Demod1On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod1phi]
label: Demodulator 1 Phi
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 1
section: Trace
get_cmd: /%s/demods/0/sample
state_quant: Demod1On
state_value_1: True
show_in_measurement_dlg: True

[Demod2SampleRate]
label: Demodulator 2 Sample Rate
datatype: DOUBLE
unit: Sa/s
group: Trace Demodulator 2
section: Trace
get_cmd: /%s/demods/1/rate

[TraceDemod2X]
label: Demodulator 2 X
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 2
section: Trace
get_cmd: /%s/demods/1/sample
state_quant: Demod2On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod2Y]
label: Demodulator 2 Y
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 2
section: Trace
get_cmd: /%s/demods/1/sample
state_quant: Demod2On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod2R]
label: Demodulator 2 R
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 2
section: Trace
get_cmd: /%s/demods/1/sample
state_quant: Demod2On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod2phi]
label: Demodulator 2 Phi
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 2
section: Trace
get_cmd: /%s/demods/1/sample
state_quant: Demod2On
state_value_1: True
show_in_measurement_dlg: True

[Demod3SampleRate]
label: Demodulator 3 Sample Rate
datatype: DOUBLE
unit: Sa/s
group: Trace Demodulator 3
section: Trace
get_cmd: /%s/demods/2/rate

[TraceDemod3X]
label: Demodulator 3 X
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 3
section: Trace
get_cmd: /%s/demods/2/sample
state_quant: Demod3On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod3Y]
label: Demodulator 3 Y
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 3
section: Trace
get_cmd: /%s/demods/2/sample
state_quant: Demod3On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod3R]
label: Demodulator 3 R
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 3
section: Trace
get_cmd: /%s/demods/2/sample
state_quant: Demod3On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod3phi]
label: Demodulator 3 Phi
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 3
section: Trace
get_cmd: /%s/demods/2/sample
state_quant: Demod3On
state_value_1: True
show_in_measurement_dlg: True

[Demod4SampleRate]
label: Demodulator 4 Sample Rate
datatype: DOUBLE
unit: Sa/s
group: Trace Demodulator 4
section: Trace
get_cmd: /%s/demods/3/rate

[TraceDemod4X]
label: Demodulator 4 X
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 4
section: Trace
get_cmd: /%s/demods/3/sample
state_quant: Demod4On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod4Y]
label: Demodulator 4 Y
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 4
section: Trace
get_cmd: /%s/demods/3/sample
state_quant: Demod4On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod4R]
label: Demodulator 4 R
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 4
section: Trace
get_cmd: /%s/demods/3/sample
state_quant: Demod4On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod4phi]
label: Demodulator 4 Phi
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 4
section: Trace
get_cmd: /%s/demods/3/sample
state_quant: Demod4On
state_value_1: True
show_in_measurement_dlg: True

[Demod5SampleRate]
label: Demodulator 5 Sample Rate
datatype: DOUBLE
unit: Sa/s
group: Trace Demodulator 5
section: Trace
get_cmd: /%s/demods/4/rate

[TraceDemod5X]
label: Demodulator 5 X
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 5
section: Trace
get_cmd: /%s/demods/4/sample
state_quant: Demod5On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod5Y]
label: Demodulator 5 Y
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 5
section: Trace
get_cmd: /%s/demods/4/sample
state_quant: Demod5On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod5R]
label: Demodulator 5 R
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 5
section: Trace
get_cmd: /%s/demods/4/sample
state_quant: Demod5On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod5phi]
label: Demodulator 5 Phi
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 5
section: Trace
get_cmd: /%s/demods/4/sample
state_quant: Demod5On
state_value_1: True
show_in_measurement_dlg: True

[Demod6SampleRate]
label: Demodulator 6 Sample Rate
datatype: DOUBLE
unit: Sa/s
group: Trace Demodulator 6
section: Trace
get_cmd: /%s/demods/5/rate

[TraceDemod6X]
label: Demodulator 6 X
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 6
section: Trace
get_cmd: /%s/demods/5/sample
state_quant: Demod6On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod6Y]
label: Demodulator 6 Y
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 6
section: Trace
get_cmd: /%s/demods/5/sample
state_quant: Demod6On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod6R]
label: Demodulator 6 R
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 6
section: Trace
get_cmd: /%s/demods/5/sample
state_quant: Demod6On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod6phi]
label: Demodulator 6 Phi
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 6
section: Trace
get_cmd: /%s/demods/5/sample
state_quant: Demod6On
state_value_1: True
show_in_measurement_dlg: True

[Demod7SampleRate]
label: Demodulator 7 Sample Rate
datatype: DOUBLE
unit: Sa/s
group: Trace Demodulator 7
section: Trace
get_cmd: /%s/demods/6/rate

[TraceDemod7X]
label: Demodulator 7 X
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 7
section: Trace
get_cmd: /%s/demods/6/sample
state_quant: Demod7On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod7Y]
label: Demodulator 7 Y
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 7
section: Trace
get_cmd: /%s/demods/6/sample
state_quant: Demod7On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod7R]
label: Demodulator 7 R
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 7
section: Trace
get_cmd: /%s/demods/6/sample
state_quant: Demod7On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod7phi]
label: Demodulator 7 Phi
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 7
section: Trace
get_cmd: /%s/demods/6/sample
state_quant: Demod7On
state_value_1: True
show_in_measurement_dlg: True

[Demod8SampleRate]
label: Demodulator 8 Sample Rate
datatype: DOUBLE
unit: Sa/s
group: Trace Demodulator 8
section: Trace
get_cmd: /%s/demods/7/rate

[TraceDemod8X]
label: Demodulator 8 X
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 8
section: Trace
get_cmd: /%s/demods/7/sample
state_quant: Demod8On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod8Y]
label: Demodulator 8 Y
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 8
section: Trace
get_cmd: /%s/demods/7/sample
state_quant: Demod8On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod8R]
label: Demodulator 8 R
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 8
section: Trace
get_cmd: /%s/demods/7/sample
state_quant: Demod8On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod8phi]
label: Demodulator 8 Phi
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 8
section: Trace
get_cmd: /%s/demods/7/sample
state_quant: Demod8On
state_value_1: True
show_in_measurement_dlg: True


#######################################################################
### Modulators ########################################################
#######################################################################

[Mod1On]
label: Modulator 1 Enable
datatype: BOOLEAN
group: Modulator 1
section: Modulators
get_cmd: /%s/mods/0/enable
option_value_1: MOD

[Mod1Mode]
label: Modulator 1 Mode
datatype: COMBO
combo_def_1: AM
combo_def_2: FM
combo_def_3: Manual
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
group: Modulator 1
section: Modulators
get_cmd: /%s/mods/0/mode
option_value_1: MOD

[Mod1SB1Mode]
label: Modulator 1 Sideband 1 Mode
datatype: COMBO
combo_def_1: Off
combo_def_2: C+M
combo_def_3: C-M
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
group: Modulator 1
section: Modulators
get_cmd: /%s/mods/0/sidebands/0/mode
option_value_1: MOD
state_quant: Mod1Mode
state_value_1: Manual

[Mod1SB2Mode]
label: Modulator 1 Sideband 2 Mode
datatype: COMBO
combo_def_1: Off
combo_def_2: C+M
combo_def_3: C-M
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
group: Modulator 1
section: Modulators
get_cmd: /%s/mods/0/sidebands/1/mode
option_value_1: MOD
state_quant: Mod1Mode
state_value_1: Manual

[Mod1Osc]
label: Modulator 1 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Modulator 1
section: Modulators
get_cmd: /%s/mods/0/carrier/oscselect
option_value_1: MOD

[Mod1SB1Osc]
label: Modulator 1 Sideband 1 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Modulator 1
section: Modulators
get_cmd: /%s/mods/0/sidebands/0/oscselect
option_value_1: MOD

[Mod1SB2Osc]
label: Modulator 1 Sideband 2 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Modulator 1
section: Modulators
get_cmd: /%s/mods/0/sidebands/1/oscselect
option_value_1: MOD
state_quant: Mod1Mode
state_value_1: Manual

[Mod1Phase]
label: Modulator 1 Phase
datatype: DOUBLE
unit: deg
group: Modulator 1
section: Modulator
get_cmd: /%s/mods/0/carrier/phaseshift
option_value_1: MOD

[Mod1SB1Phase]
label: Modulator 1 Sideband 1 Phase
datatype: DOUBLE
unit: deg
group: Modulator 1
section: Modulator
get_cmd: /%s/mods/0/sidebands/0/phaseshift
option_value_1: MOD

[Mod1SB2Phase]
label: Modulator 1 Sideband 2 Phase
datatype: DOUBLE
unit: deg
group: Modulator 1
section: Modulator
get_cmd: /%s/mods/0/sidebands/1/phaseshift
option_value_1: MOD
state_quant: Mod1Mode
state_value_1: Manual

[Mod1TC]
label: Modulator 1 Time Constant
datatype: DOUBLE
unit: s
group: Modulator 1
section: Modulator
get_cmd: /%s/mods/0/carrier/timeconstant
option_value_1: MOD

[Mod1SB1TC]
label: Modulator 1 Sideband 1 Time Constant
datatype: DOUBLE
unit: s
group: Modulator 1
section: Modulator
get_cmd: /%s/mods/0/sidebands/0/timeconstant
option_value_1: MOD

[Mod1SB2TC]
label: Modulator 1 Sideband 2 Time Constant
datatype: DOUBLE
unit: s
group: Modulator 1
section: Modulator
get_cmd: /%s/mods/0/sidebands/1/timeconstant
option_value_1: MOD
state_quant: Mod1Mode
state_value_1: Manual

[Mod1OutAmp]
label: Modulator 1 Output Amp
datatype: DOUBLE
unit: V
group: Modulator 1
section: Modulator
get_cmd: /%s/mods/0/carrier/amplitude
option_value_1: MOD

[Mod1SB1OutAmp]
label: Modulator 1 Sideband 1 Output Amp
datatype: DOUBLE
unit: V
group: Modulator 1
section: Modulator
get_cmd: /%s/mods/0/sidebands/0/amplitude
option_value_1: MOD

[Mod1SB2OutAmp]
label: Modulator 1 Sideband 2 Output Amp
datatype: DOUBLE
unit: V
group: Modulator 1
section: Modulator
get_cmd: /%s/mods/0/sidebands/1/amplitude
option_value_1: MOD
state_quant: Mod1Mode
state_value_1: Manual

[Mod2On]
label: Modulator 2 Enable
datatype: BOOLEAN
group: Modulator 2
section: Modulators
get_cmd: /%s/mods/1/enable
option_value_1: MOD

[Mod2Mode]
label: Modulator 2 Mode
datatype: COMBO
combo_def_1: AM
combo_def_2: FM
combo_def_3: Manual
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
group: Modulator 2
section: Modulators
get_cmd: /%s/mods/1/mode
option_value_1: MOD

[Mod2SB1Mode]
label: Modulator 2 Sideband 1 Mode
datatype: COMBO
combo_def_1: Off
combo_def_2: C+M
combo_def_3: C-M
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
group: Modulator 2
section: Modulators
get_cmd: /%s/mods/1/sidebands/0/mode
option_value_1: MOD
state_quant: Mod2Mode
state_value_1: Manual

[Mod2SB2Mode]
label: Modulator 2 Sideband 2 Mode
datatype: COMBO
combo_def_1: Off
combo_def_2: C+M
combo_def_3: C-M
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
group: Modulator 2
section: Modulators
get_cmd: /%s/mods/1/sidebands/1/mode
option_value_1: MOD
state_quant: Mod2Mode
state_value_1: Manual

[Mod2Osc]
label: Modulator 2 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Modulator 2
section: Modulators
get_cmd: /%s/mods/1/carrier/oscselect
option_value_1: MOD

[Mod2SB1Osc]
label: Modulator 2 Sideband 1 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Modulator 2
section: Modulators
get_cmd: /%s/mods/1/sidebands/0/oscselect
option_value_1: MOD

[Mod2SB2Osc]
label: Modulator 2 Sideband 2 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Modulator 2
section: Modulators
get_cmd: /%s/mods/1/sidebands/1/oscselect
option_value_1: MOD
state_quant: Mod2Mode
state_value_1: Manual

[Mod2Phase]
label: Modulator 2 Phase
datatype: DOUBLE
unit: deg
group: Modulator 2
section: Modulator
get_cmd: /%s/mods/1/carrier/phaseshift
option_value_1: MOD

[Mod2SB1Phase]
label: Modulator 2 Sideband 1 Phase
datatype: DOUBLE
unit: deg
group: Modulator 2
section: Modulator
get_cmd: /%s/mods/1/sidebands/0/phaseshift
option_value_1: MOD

[Mod2SB2Phase]
label: Modulator 2 Sideband 2 Phase
datatype: DOUBLE
unit: deg
group: Modulator 2
section: Modulator
get_cmd: /%s/mods/1/sidebands/1/phaseshift
option_value_1: MOD
state_quant: Mod2Mode
state_value_1: Manual

[Mod2TC]
label: Modulator 2 Time Constant
datatype: DOUBLE
unit: s
group: Modulator 2
section: Modulator
get_cmd: /%s/mods/1/carrier/timeconstant
option_value_1: MOD

[Mod2SB1TC]
label: Modulator 2 Sideband 1 Time Constant
datatype: DOUBLE
unit: s
group: Modulator 2
section: Modulator
get_cmd: /%s/mods/1/sidebands/0/timeconstant
option_value_1: MOD

[Mod2SB2TC]
label: Modulator 2 Sideband 2 Time Constant
datatype: DOUBLE
unit: s
group: Modulator 2
section: Modulator
get_cmd: /%s/mods/1/sidebands/1/timeconstant
option_value_1: MOD
state_quant: Mod2Mode
state_value_1: Manual

[Mod2OutAmp]
label: Modulator 2 Output Amp
datatype: DOUBLE
unit: V
group: Modulator 2
section: Modulator
get_cmd: /%s/mods/1/carrier/amplitude
option_value_1: MOD

[Mod2SB1OutAmp]
label: Modulator 2 Sideband 1 Output Amp
datatype: DOUBLE
unit: V
group: Modulator 2
section: Modulator
get_cmd: /%s/mods/1/sidebands/0/amplitude
option_value_1: MOD

[Mod2SB2OutAmp]
label: Modulator 2 Sideband 2 Output Amp
datatype: DOUBLE
unit: V
group: Modulator 2
section: Modulator
get_cmd: /%s/mods/1/sidebands/1/amplitude
option_value_1: MOD
state_quant: Mod2Mode
state_value_1: Manual

################### Scope Module Control Options ###################
[ScopeModuleControlMode]
label: Mode
datatype: COMBO
combo_def_1: Time domain
combo_def_2: Freq domain FFT
cmd_def_1: 1
cmd_def_2: 3
section: Scope Module Control
group: Horizontal
get_cmd: scopeModule/mode

[ScopeModuleControlSamplingRate]
label: Sampling rate
datatype: COMBO
combo_def_1: 1.8 GHz
combo_def_2: 900 MHz
combo_def_3: 450 MHz
combo_def_4: 225 MHz
combo_def_5: 113 MHz
combo_def_6: 56.2 MHz
combo_def_7: 28.1 MHz
combo_def_8: 14.0 MHz
combo_def_9: 7.03 MHz
combo_def_10: 3.5 MHz
combo_def_11: 1.75 MHz
combo_def_12: 880 KHz
combo_def_13: 440 KHz
combo_def_14: 220 KHz
combo_def_15: 110 KHz
combo_def_16: 54.9 KHz
combo_def_17: 27.5 KHz
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
cmd_def_11: 10
cmd_def_12: 11
cmd_def_13: 12
cmd_def_14: 13
cmd_def_15: 14
cmd_def_16: 15
cmd_def_17: 16
section: Scope Module Control
group: Horizontal
get_cmd: /%s/scopes/0/time

[ScopeControlModuleLengthUnit]
label: Unit
datatype: COMBO
combo_def_1: Points
combo_def_2: Duration
section: Scope Module Control
group: Horizontal

[ScopeModuleControlLengthPoints]
label: Points
datatype: DOUBLE
section: Scope Module Control
group: Horizontal
state_quant: ScopeControlModuleLengthUnit
state_value_1: Points
get_cmd: /%s/scopes/0/length

[ScopeModuleControlLengthDuration]
label: Duration
datatype: DOUBLE
section: Scope Module Control
group: Horizontal
state_quant: ScopeControlModuleLengthUnit
state_value_1: Duration
get_cmd: /%s/scopes/0/length

[ScopeModuleControlChannelMode]
label: Channel Mode
datatype: COMBO
combo_def_1: Channel 1
combo_def_2: Channel 2
combo_def_3: Both
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
section: Scope Module Control
group: Vertical
get_cmd: /%s/scopes/0/channel

[ScopeModuleControlChannel1Input]
label: Channel 1 input
datatype: COMBO
section: Scope Module Control
group: Vertical
combo_def_1: AU Cartesian 1
combo_def_2: AU Cartesian 2
combo_def_3: AU Polar 1
combo_def_4: AU Polar 2
combo_def_5: AUX In 1 Sample Channel 1
combo_def_6: AUX In 1 Sample Channel 2
combo_def_7: AUX Output 1
combo_def_8: Aux Output 2
combo_def_9: AUX Output 3
combo_def_10: AUX Output 4
combo_def_11: Demod 1 Sample R
combo_def_12: Demod 1 Sample Phase
combo_def_13: Demod 1 Sample X
combo_def_14: Demod 1 Sample Y
combo_def_15: Demod 2 Sample R
combo_def_16: Demod 2 Sample Phase
combo_def_17: Demod 2 Sample X
combo_def_18: Demod 2 Sample Y
combo_def_19: Demod 3 Sample R
combo_def_20: Demod 3 Sample Phase
combo_def_21: Demod 3 Sample X
combo_def_22: Demod 3 Sample Y
combo_def_23: Demod 4 Sample R
combo_def_24: Demod 4 Sample Phase
combo_def_25: Demod 4 Sample X
combo_def_26: Demod 4 Sample Y
combo_def_27: Demod 5 Sample R
combo_def_28: Demod 5 Sample Phase
combo_def_29: Demod 5 Sample X
combo_def_30: Demod 5 Sample Y
combo_def_31: Demod 6 Sample R
combo_def_32: Demod 6 Sample Phase
combo_def_33: Demod 6 Sample X
combo_def_34: Demod 6 Sample Y
combo_def_35: Demod 7 Sample R
combo_def_36: Demod 7 Sample Phase
combo_def_37: Demod 7 Sample X
combo_def_38: Demod 7 Sample Y
combo_def_39: Demod 8 Sample R
combo_def_40: Demod 8 Sample Phase
combo_def_41: Demod 8 Sample X
combo_def_42: Demod 8 Sample Y
combo_def_43: Osc Phi Demod 4
combo_def_44: Osc Phi Demod 8
combo_def_45: Signal Input 1
combo_def_46: Signal Input 2
combo_def_47: Trigger Input 1
combo_def_48: Trigger Input 2
cmd_def_1: 112
cmd_def_2: 113
cmd_def_3: 128
cmd_def_4: 129
cmd_def_5: 8
cmd_def_6: 9
cmd_def_7: 4
cmd_def_8: 5
cmd_def_9: 6
cmd_def_10: 7
cmd_def_11: 48
cmd_def_12: 64
cmd_def_13: 16
cmd_def_14: 32
cmd_def_15: 49
cmd_def_16: 65
cmd_def_17: 17
cmd_def_18: 33
cmd_def_19: 50
cmd_def_20: 66
cmd_def_21: 18
cmd_def_22: 34
cmd_def_23: 51
cmd_def_24: 67
cmd_def_25: 19
cmd_def_26: 35
cmd_def_27: 52
cmd_def_28: 68
cmd_def_29: 20
cmd_def_30: 36
cmd_def_31: 53
cmd_def_32: 69
cmd_def_33: 21
cmd_def_34: 37
cmd_def_35: 54
cmd_def_36: 70
cmd_def_37: 22
cmd_def_38: 38
cmd_def_39: 55
cmd_def_40: 71
cmd_def_41: 23
cmd_def_42: 39
cmd_def_43: 10
cmd_def_44: 11
cmd_def_45: 0
cmd_def_46: 1
cmd_def_47: 2
cmd_def_48: 3
get_cmd: /%s/scopes/0/channels/0/inputselect

[ScopeModuleControlChannel1Min]
label: Min
datatype: DOUBLE
section: Scope Module Control
group: Vertical
get_cmd: /%s/scopes/0/channels/0/limitlower

[ScopeModuleControlChannel1Max]
label: Max
datatype: DOUBLE
section: Scope Module Control
group: Vertical
get_cmd: /%s/scopes/0/channels/0/limitupper

[ScopeModuleControlChannel2Input]
label: Channel 2 input
datatype: COMBO
section: Scope Module Control
group: Vertical
combo_def_1: AU Cartesian 1
combo_def_2: AU Cartesian 2
combo_def_3: AU Polar 1
combo_def_4: AU Polar 2
combo_def_5: AUX In 1 Sample Channel 1
combo_def_6: AUX In 1 Sample Channel 2
combo_def_7: AUX Output 1
combo_def_8: Aux Output 2
combo_def_9: AUX Output 3
combo_def_10: AUX Output 4
combo_def_11: Demod 1 Sample R
combo_def_12: Demod 1 Sample Phase
combo_def_13: Demod 1 Sample X
combo_def_14: Demod 1 Sample Y
combo_def_15: Demod 2 Sample R
combo_def_16: Demod 2 Sample Phase
combo_def_17: Demod 2 Sample X
combo_def_18: Demod 2 Sample Y
combo_def_19: Demod 3 Sample R
combo_def_20: Demod 3 Sample Phase
combo_def_21: Demod 3 Sample X
combo_def_22: Demod 3 Sample Y
combo_def_23: Demod 4 Sample R
combo_def_24: Demod 4 Sample Phase
combo_def_25: Demod 4 Sample X
combo_def_26: Demod 4 Sample Y
combo_def_27: Demod 5 Sample R
combo_def_28: Demod 5 Sample Phase
combo_def_29: Demod 5 Sample X
combo_def_30: Demod 5 Sample Y
combo_def_31: Demod 6 Sample R
combo_def_32: Demod 6 Sample Phase
combo_def_33: Demod 6 Sample X
combo_def_34: Demod 6 Sample Y
combo_def_35: Demod 7 Sample R
combo_def_36: Demod 7 Sample Phase
combo_def_37: Demod 7 Sample X
combo_def_38: Demod 7 Sample Y
combo_def_39: Demod 8 Sample R
combo_def_40: Demod 8 Sample Phase
combo_def_41: Demod 8 Sample X
combo_def_42: Demod 8 Sample Y
combo_def_43: Osc Phi Demod 4
combo_def_44: Osc Phi Demod 8
combo_def_45: Signal Input 1
combo_def_46: Signal Input 2
combo_def_47: Trigger Input 1
combo_def_48: Trigger Input 2
cmd_def_1: 112
cmd_def_2: 113
cmd_def_3: 128
cmd_def_4: 129
cmd_def_5: 8
cmd_def_6: 9
cmd_def_7: 4
cmd_def_8: 5
cmd_def_9: 6
cmd_def_10: 7
cmd_def_11: 48
cmd_def_12: 64
cmd_def_13: 16
cmd_def_14: 32
cmd_def_15: 49
cmd_def_16: 65
cmd_def_17: 17
cmd_def_18: 33
cmd_def_19: 50
cmd_def_20: 66
cmd_def_21: 18
cmd_def_22: 34
cmd_def_23: 51
cmd_def_24: 67
cmd_def_25: 19
cmd_def_26: 35
cmd_def_27: 52
cmd_def_28: 68
cmd_def_29: 20
cmd_def_30: 36
cmd_def_31: 53
cmd_def_32: 69
cmd_def_33: 21
cmd_def_34: 37
cmd_def_35: 54
cmd_def_36: 70
cmd_def_37: 22
cmd_def_38: 38
cmd_def_39: 55
cmd_def_40: 71
cmd_def_41: 23
cmd_def_42: 39
cmd_def_43: 10
cmd_def_44: 11
cmd_def_45: 0
cmd_def_46: 1
cmd_def_47: 2
cmd_def_48: 3
get_cmd: /%s/scopes/0/channels/1/inputselect

[ScopeModuleControlChannel2Min]
label: Min
datatype: DOUBLE
section: Scope Module Control
group: Vertical
get_cmd: /%s/scopes/0/channels/1/limitlower

[ScopeModuleControlChannel2Max]
label: Max
datatype: DOUBLE
section: Scope Module Control
group: Vertical
get_cmd: /%s/scopes/0/channels/1/limitupper

[ScopeModuleControlAvgFilter]
label: Avg Filter
datatype: COMBO
combo_def_1: None
combo_def_2: Exp Moving Avg
cmd_def_1: 1
cmd_def_2: 2
group: Vertical
section: Scope Module Control

[ScopeModuleControlAvgValue]
label: Averages
datatype: DOUBLE
section: Scope Module Control
group: Vertical
get_cmd: scopeModule/averager/weight

################### Scope Module Trig Options ###################
[ScopeModuleTrigEnable]
label: Enable
datatype: BOOLEAN
section: Scope Module Trigger
group: Trig
get_cmd: /%s/scopes/0/trigenable

[ScopeModuleTrigSignal]
label: Signal
datatype: COMBO
section: Scope Module Trigger
group: Trig
combo_def_1: AU Cartesian 1
combo_def_2: AU Cartesian 2
combo_def_3: AU Polar 1
combo_def_4: AU Polar 2
combo_def_5: AUX In 1 Sample Channel 1
combo_def_6: AUX In 1 Sample Channel 2
combo_def_7: AUX Output 1
combo_def_8: Aux Output 2
combo_def_9: AUX Output 3
combo_def_10: AUX Output 4
combo_def_11: Demod 1 Sample R
combo_def_12: Demod 1 Sample Phase
combo_def_13: Demod 1 Sample X
combo_def_14: Demod 1 Sample Y
combo_def_15: Demod 2 Sample R
combo_def_16: Demod 2 Sample Phase
combo_def_17: Demod 2 Sample X
combo_def_18: Demod 2 Sample Y
combo_def_19: Demod 3 Sample R
combo_def_20: Demod 3 Sample Phase
combo_def_21: Demod 3 Sample X
combo_def_22: Demod 3 Sample Y
combo_def_23: Demod 4 Sample R
combo_def_24: Demod 4 Sample Phase
combo_def_25: Demod 4 Sample X
combo_def_26: Demod 4 Sample Y
combo_def_27: Demod 5 Sample R
combo_def_28: Demod 5 Sample Phase
combo_def_29: Demod 5 Sample X
combo_def_30: Demod 5 Sample Y
combo_def_31: Demod 6 Sample R
combo_def_32: Demod 6 Sample Phase
combo_def_33: Demod 6 Sample X
combo_def_34: Demod 6 Sample Y
combo_def_35: Demod 7 Sample R
combo_def_36: Demod 7 Sample Phase
combo_def_37: Demod 7 Sample X
combo_def_38: Demod 7 Sample Y
combo_def_39: Demod 8 Sample R
combo_def_40: Demod 8 Sample Phase
combo_def_41: Demod 8 Sample X
combo_def_42: Demod 8 Sample Y
combo_def_43: Osc Phi Demod 4
combo_def_44: Osc Phi Demod 8
combo_def_45: Signal Input 1
combo_def_46: Signal Input 2
combo_def_47: Trigger Input 1
combo_def_48: Trigger Input 2
cmd_def_1: 112
cmd_def_2: 113
cmd_def_3: 128
cmd_def_4: 129
cmd_def_5: 8
cmd_def_6: 9
cmd_def_7: 4
cmd_def_8: 5
cmd_def_9: 6
cmd_def_10: 7
cmd_def_11: 48
cmd_def_12: 64
cmd_def_13: 16
cmd_def_14: 32
cmd_def_15: 49
cmd_def_16: 65
cmd_def_17: 17
cmd_def_18: 33
cmd_def_19: 50
cmd_def_20: 66
cmd_def_21: 18
cmd_def_22: 34
cmd_def_23: 51
cmd_def_24: 67
cmd_def_25: 19
cmd_def_26: 35
cmd_def_27: 52
cmd_def_28: 68
cmd_def_29: 20
cmd_def_30: 36
cmd_def_31: 53
cmd_def_32: 69
cmd_def_33: 21
cmd_def_34: 37
cmd_def_35: 54
cmd_def_36: 70
cmd_def_37: 22
cmd_def_38: 38
cmd_def_39: 55
cmd_def_40: 71
cmd_def_41: 23
cmd_def_42: 39
cmd_def_43: 10
cmd_def_44: 11
cmd_def_45: 0
cmd_def_46: 1
cmd_def_47: 2
cmd_def_48: 3
get_cmd: /%s/scopes/0/trigchannel

[ScopeModuleTrigSlope]
label: Slope
datatype: COMBO
combo_def_1: None
combo_def_2: Rise
combo_def_3: Fall
combo_def_4: Both
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
section: Scope Module Trigger
group: Trig
get_cmd: /%s/scopes/0/trigslope

[ScopeModuleTrigLevel]
label: Level (V)
datatype: DOUBLE
section: Scope Module Trigger
group: Trig
get_cmd: /%s/scopes/0/triglevel

[ScopeModuleTrigHysteresisUnit]
label: Hysteresis unit
datatype: COMBO
combo_def_1: Voltage
combo_def_2: Percentage
cmd_def_1: 0
cmd_def_2: 1
section: Scope Module Trigger
group: Trig
get_cmd: /%s/scopes/0/trighysteresis/mode

[ScopeModuleTrigHysteresisVoltage]
label: Hysteresis (V)
datatype: DOUBLE
section: Scope Module Trigger
group: Trig
state_quant: ScopeModuleTrigHysteresisUnit
state_value_1: Voltage
get_cmd: /%s/scopes/0/trighysteresis/absolute

[ScopeModuleTrigHysteresisPercentage]
label: Hysteresis (%)
datatype: DOUBLE
section: Scope Module Trigger
group: Trig
state_quant: ScopeModuleTrigHysteresisUnit
state_value_1: Percentage
get_cmd: /%s/scopes/0/trighysteresis/relative

[ScopeModuleTrigTriggerGatingEnable]
label: Trigger Gating
datatype: BOOLEAN
section: Scope Module Trigger
group: Trig
get_cmd: /%s/scopes/0/triggate/enable

[ScopeModuleTrigTriggerGating]
label: Trigger Gating
datatype: COMBO
section: Scope Module Trigger
group: Trig
combo_def_1: Trigger In 3 High
combo_def_2: Trigger In 3 Low
combo_def_3: Trigger In 4 High
combo_def_4: Trigger In 4 Low
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
get_cmd: /%s/scopes/0/triggate/inputselect

[ScopeModuleTrigHoldoffUnit]
label: Holdoff unit
datatype: COMBO
combo_def_1: Time
combo_def_2: Events
cmd_def_1: 0
cmd_def_2: 1
section: Scope Module Trigger
group: Trig
get_cmd: /%s/scopes/0/trigholdoffmode

[ScopeModuleTrigHoldoffTime]
label: Holdoff (s)
datatype: DOUBLE
section: Scope Module Trigger
group: Trig
state_quant: ScopeModuleTrigHoldoffUnit
state_value_1: Time
get_cmd: /%s/scopes/0/trigholdoff

[ScopeModuleTrigHoldoffEvents]
label: Holdoff (events)
datatype: DOUBLE
section: Scope Module Trigger
group: Trig
state_quant: ScopeModuleTrigHoldoffUnit
state_value_1: Events
get_cmd: /%s/scopes/0/trigholdoffcount

[ScopeModuleTrigReference]
label: Reference (%)
datatype: DOUBLE
section: Scope Module Trigger
group: Trig
get_cmd: /%s/scopes/0/trigreference

[ScopeModuleTrigDelay]
label: Delay (s)
datatype: DOUBLE
section: Scope Module Trigger
group: Trig
get_cmd: /%s/scopes/0/trigdelay

[ScopeModuleSegmentsEnable]
label: Enable
datatype: BOOLEAN
section: Scope Module Trigger
group: Segments
get_cmd: /%s/scopes/0/segments/enable

[ScopeModuleSegmentsSegments]
label: Segments
datatype: DOUBLE
section: Scope Module Trigger
group: Segments
state_quant: ScopeModuleSegmentsEnable
state_value_1: TRUE
get_cmd: /%s/scopes/0/segments/count

[ScopeModuleSegmentsShownTrigger]
label: Shown trigger
datatype: DOUBLE
permission: READ
section: Scope Module Trigger
group: Segments

[ScopeModuleSegmentsPlotType]
label: Plot type
datatype: COMBO
combo_def_1: 2D
combo_def_2: Row
combo_def_3: 2D + Row
section: Scope Module Trigger
group: Segments

[ScopeModuleSegmentsPaletteEnable]
label: Palette Enable
datatype: BOOLEAN
section: Scope Module Trigger
group: Segments

[ScopeModuleSegmentsPalette]
label: Palette
datatype: COMBO
combo_def_1: Default
combo_def_2: Hot
combo_def_3: Cool
combo_def_4: Jet
combo_def_5: Grey
combo_def_6: Copper
section: Scope Module Trigger
group: Segments

[ScopeModuleSegmentsActiveRow]
label: Active row
datatype: DOUBLE
section: Scope Module Trigger
group: Segments

[ScopeModuleSegmentsMapping]
label: Mapping
datatype: COMBO
combo_def_1: Lin
combo_def_2: Log
combo_def_3: dB
section: Scope Module Trigger
group: Segments

[ScopeModuleSegmentsScalingEnable]
label: Scaling Enable
datatype: BOOLEAN
section: Scope Module Trigger
group: Segments

[ScopeModuleSegmentsScaling]
label: Scaling
datatype: COMBO
combo_def_1: FS
combo_def_2: Man
combo_def_3: Auto
section: Scope Module Trigger
group: Segments

################### Scope Module Advanced Options ###################
[ScopeModuleAdvancedMode]
label: Mode
datatype: COMBO
combo_def_1: Time domain
combo_def_2: Freq. domain
cmd_def_1: 1
cmd_def_2: 2
get_cmd: scopeModule/mode
section: Scope Module Advanced
group: Horizontal

[ScopeModuleAdvancedFFT]
label: FFT Window
datatype: COMBO
combo_def_1: Rectangular
combo_def_2: Hann
combo_def_3: Hamming
combo_def_4: Blackman Harris
combo_def_5: Exponential (ring down)
combo_def_6: Cosine (ring down)
combo_def_7: Cosine squared (ring down)
section: Scope Module Advanced
group: Horizontal
state_quant: ScopeModuleAdvancedMode
state_value_1: Freq. domain

[ScopeModuleAdvancedResolution]
label: Resolution (Hz)
datatype: DOUBLE
permission: READ
section: Scope Module Advanced
Group: Horizontal

[ScopeModuleAdvancedSpectralDensity]
label: Spectral Density
datatype: BOOLEAN
section: Scope Module Advanced
group: Vertical
state_quant: ScopeModuleAdvancedMode
state_value_1: Freq. domain

[ScopeModuleAdvancedPower]
label: Power
datatype: BOOLEAN
section: Scope Module Advanced
group: Vertical
state_quant: ScopeModuleAdvancedMode
state_value_1: Freq. domain

[ScopeModuleAdvancedPersistance]
label: Persistance
datatype: BOOLEAN
section: Scope Module Advanced
group: Vertical

[ScopeModuleAdvancedBWLimitCh1]
label: BW Limit Ch 1
datatype: BOOLEAN
section: Scope Module Advanced
group: Vertical
get_cmd: /%s/scopes/0/channels/0/bwlimit

[ScopeModuleAdvancedBWLimitCh2]
label: BW Limit Ch 2
datatype: BOOLEAN
section: Scope Module Advanced
group: Vertical
get_cmd: /%s/scopes/0/channels/1/bwlimit

[ScopeModuleAdvancedRate]
label: Rate
datatype: COMBO
combo_def_1: 28.1 MHz
combo_def_2: 14.0 MHz
combo_def_3: 7.03 MHz
combo_def_4: 3.5 MHz
combo_def_5: 1.75 MHz
combo_def_6: 880 KHz
combo_def_7: 440 KHz
combo_def_8: 220 KHz
combo_def_9: 110 KHz
combo_def_10: 54.9 KHz
combo_def_11: 27.5 KHz
cmd_def_1: 6
cmd_def_2: 7
cmd_def_3: 8
cmd_def_4: 9
cmd_def_5: 10
cmd_def_6: 11
cmd_def_7: 12
cmd_def_8: 13
cmd_def_9: 14
cmd_def_10: 15
cmd_def_11: 16
section: Scope Module Advanced
group: Scope Streaming
get_cmd: /%s/scopes/0/stream/rate

[ScopeModuleAdvancedEnableCh1]
label: Enable Ch 1
datatype: BOOLEAN
section: Scope Module Advanced
group: Scope Streaming
get_cmd: /%s/scopes/0/stream/enables/0

[ScopeModuleAdvancedEnableCh2]
label: Enable Ch 2
datatype: BOOLEAN
section: Scope Module Advanced
group: Scope Streaming
get_cmd: /%s/scopes/0/stream/enables/1

[ScopeModuleAdvancedXAxis]
label: X Axis
datatype: COMBO
combo_def_1: Time/Freq
combo_def_2: Channel 1
combo_def_3: Channel 2
section: Scope Module Advanced
group: X/Y Display